[
    {
        "object.className": "ProtImportMovies",
        "object.id": "6299",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "./6299.outputMovies",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/home/scipion/ScipionUserData/projects/Example_10248_Scipion3/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "output": [
            {
                "outputName": "6299.outputMovies",
                "outputType": "SetOfMovies",
                "outputSize": 30,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 1
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 2
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 3
                    }
                ]
            }
        ],
        "summary": "*30* Movies imported from /home/scipion/ScipionUserData/projects/Example_10248_Scipion3/EMPIAR/*.tiffIs the data phase flipped : FalseSampling rate : *0.49* \u212b/pxOutput: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6299_ProtImportMovies.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "pwem",
        "pluginVersion": "3.0.5"
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "6383",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "estimateGain": true,
        "estimateOrientation": true,
        "estimateResidualGain": true,
        "normalizeGain": true,
        "estimateSigma": false,
        "frameStep": 5,
        "movieStep": 250,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "6299.outputMovies",
        "output": [
            {
                "outputName": "6383.outputMovies",
                "outputType": "SetOfMovies",
                "outputSize": 30,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 1
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 2
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 3
                    }
                ]
            },
            {
                "outputName": "6383.outputGains",
                "outputType": "SetOfImages",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006383_XmippProtMovieGain/extra/movie_000001_gain.xmp",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6383.outputGains_0_movie_000001_gain.jpg"
                    }
                ]
            }
        ],
        "summary": "movie_000001: mean=1.000000 std=0.482939 [min=0.188494,max=4.285274]            2.5%=0.549968 25%=0.713896 50%=0.852006 75%=1.093506 97.5%=2.686333Input: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px) \nOutput: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px)SetOfImages (1 items, 3710 x 3838, 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6383_XmippProtMovieGain.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtMovieCorr",
        "object.id": "6458",
        "object.label": "xmipp3 - FlexAlign",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": true,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "outsideValue": 0.0,
        "doLocalAlignment": true,
        "autoControlPoints": true,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "groupNFrames": 3,
        "gainRot": 0,
        "gainFlip": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "6383.outputMovies",
        "output": [
            {
                "outputName": "6458.outputMovies",
                "outputType": "SetOfMovies",
                "outputSize": 30,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3
                    }
                ]
            },
            {
                "outputName": "6458.outputMicrographs",
                "outputType": "SetOfMicrographs",
                "outputSize": 30,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6458.outputMicrographs_0_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6458.outputMicrographs_0_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6458.outputMicrographs_0_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Input: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px) \nOutput: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px)SetOfMicrographs (30 items, 3710 x 3838, 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6458_XmippProtMovieCorr.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "6557",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "rejType": 3,
        "maxFrameShift": 5.0,
        "maxMovieShift": 20.0,
        "inputMovies": "6458.outputMovies",
        "output": [
            {
                "outputName": "6557.outputMovies",
                "outputType": "SetOfMovies",
                "outputSize": 29,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3
                    }
                ]
            },
            {
                "outputName": "6557.outputMicrographs",
                "outputType": "SetOfMicrographs",
                "outputSize": 29,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6557.outputMicrographs_0_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6557.outputMicrographs_0_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6557.outputMicrographs_0_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "6557.outputMoviesDiscarded",
                "outputType": "SetOfMovies",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006299_ProtImportMovies/extra/190117_02_00022_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00022_UnderDefocus0.7um_frameImage.tiff",
                        "_alignment": "MovieAlignment",
                        "_framesRange": "[1-50] starts: 1",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-16.051294', '-11.123602', '-10.639367', '-10.380756', '-9.627535', '-9.687392', '-8.880237', '-8.531037', '-8.500806', '-7.474246', '-7.572709', '-7.185676', '-6.255817', '-5.25834', '-4.514578', '-3.995048', '-3.719156', '-2.03538', '-1.366816', '-1.061661', '0.0', '1.014603', '1.12454', '3.284826', '3.618505', '3.531723', '4.874547', '5.060834', '5.662731', '8.008505', '7.609331', '7.245327', '8.456575', '8.243052', '9.122622', '9.88441', '10.171727', '10.086827', '10.903428', '11.439499', '12.617206', '12.657545', '13.822013', '13.644777', '13.55503', '14.757719', '15.154469', '15.84038', '15.849339', '15.650393']",
                        "_xmipp_ShiftY": "['0.014334', '-11.191835', '-12.396049', '-12.31991', '-12.208585', '-12.314178', '-11.360999', '-11.353847', '-9.505785', '-9.301435', '-7.770205', '-6.98103', '-5.699301', '-5.820559', '-4.966324', '-5.238144', '-3.454428', '-3.483453', '-1.593199', '-0.04314', '0.0', '0.743743', '0.655208', '0.906067', '2.428209', '1.516352', '1.832181', '1.839767', '2.688493', '4.026718', '3.75969', '3.810161', '4.51196', '5.013231', '6.550685', '6.832093', '6.043821', '8.342149', '8.947874', '9.011243', '9.798483', '9.103998', '10.912895', '11.406337', '12.424133', '11.750849', '11.948709', '11.251193', '12.467046', '12.407556']",
                        "item_id": 22
                    }
                ]
            },
            {
                "outputName": "6557.outputMicrographsDiscarded",
                "outputType": "SetOfMicrographs",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00022_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00022_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-16.051294', '-11.123602', '-10.639367', '-10.380756', '-9.627535', '-9.687392', '-8.880237', '-8.531037', '-8.500806', '-7.474246', '-7.572709', '-7.185676', '-6.255817', '-5.25834', '-4.514578', '-3.995048', '-3.719156', '-2.03538', '-1.366816', '-1.061661', '0.0', '1.014603', '1.12454', '3.284826', '3.618505', '3.531723', '4.874547', '5.060834', '5.662731', '8.008505', '7.609331', '7.245327', '8.456575', '8.243052', '9.122622', '9.88441', '10.171727', '10.086827', '10.903428', '11.439499', '12.617206', '12.657545', '13.822013', '13.644777', '13.55503', '14.757719', '15.154469', '15.84038', '15.849339', '15.650393']",
                        "_xmipp_ShiftY": "['0.014334', '-11.191835', '-12.396049', '-12.31991', '-12.208585', '-12.314178', '-11.360999', '-11.353847', '-9.505785', '-9.301435', '-7.770205', '-6.98103', '-5.699301', '-5.820559', '-4.966324', '-5.238144', '-3.454428', '-3.483453', '-1.593199', '-0.04314', '0.0', '0.743743', '0.655208', '0.906067', '2.428209', '1.516352', '1.832181', '1.839767', '2.688493', '4.026718', '3.75969', '3.810161', '4.51196', '5.013231', '6.550685', '6.832093', '6.043821', '8.342149', '8.947874', '9.011243', '9.798483', '9.103998', '10.912895', '11.406337', '12.424133', '11.750849', '11.948709', '11.251193', '12.467046', '12.407556']",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6557.outputMicrographsDiscarded_0_190117_02_00022_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Movies processed: 30Movies rejected: *1*Input: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px) \nOutput: SetOfMovies (29 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px)SetOfMicrographs (29 items, 3710 x 3838, 0.49 \u212b/px)SetOfMovies (1 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px)SetOfMicrographs (1 items, 3710 x 3838, 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6557_XmippProtMovieMaxShift.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "6631",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "6557.outputMicrographs",
        "output": [
            {
                "outputName": "6631.outputCTF",
                "outputType": "SetOfCTF",
                "outputSize": 29,
                "outputItems": [
                    {
                        "_defocusU": "8976.758789",
                        "_defocusV": "8634.207031",
                        "_defocusAngle": "19.455287",
                        "_defocusRatio": "1.0396737947990027",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "3.143684",
                        "_fitQuality": "0.057344",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6631.outputCTF_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "8763.446289",
                        "_defocusV": "8466.169922",
                        "_defocusAngle": "21.72124",
                        "_defocusRatio": "1.0351134420568981",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "3.011597",
                        "_fitQuality": "0.055151",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6631.outputCTF_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "9214.817383",
                        "_defocusV": "9150.615234",
                        "_defocusAngle": "2.386997",
                        "_defocusRatio": "1.007016156548846",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "2.890161",
                        "_fitQuality": "0.052854",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6631.outputCTF_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfMicrographs (29 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCTF             (29 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6631_LegacyProtocol.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.0.9"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "6692",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "6557.outputMicrographs",
        "output": [
            {
                "outputName": "6692.outputCTF",
                "outputType": "SetOfCTF",
                "outputSize": 29,
                "outputItems": [
                    {
                        "_defocusU": "8961.06",
                        "_defocusV": "8648.37",
                        "_defocusAngle": "20.03",
                        "_defocusRatio": "1.0361559461493899",
                        "_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "2.353",
                        "_fitQuality": "0.15037",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6692.outputCTF_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "8718.14",
                        "_defocusV": "8517.72",
                        "_defocusAngle": "23.59",
                        "_defocusRatio": "1.0235297708776527",
                        "_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "2.669",
                        "_fitQuality": "0.152262",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6692.outputCTF_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "9237.52",
                        "_defocusV": "9137.48",
                        "_defocusAngle": "27.78",
                        "_defocusRatio": "1.010948313977158",
                        "_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "2.401",
                        "_fitQuality": "0.15583",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6692.outputCTF_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfMicrographs (29 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCTF             (29 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6692_LegacyProtocol.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "6819",
        "object.label": "xmipp3 - ctf consensus GCTF+CTFFind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 4.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 4.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF": "6631.outputCTF",
        "inputCTF2": "6692.outputCTF",
        "output": [
            {
                "outputName": "6819.outputCTF",
                "outputType": "SetOfCTF",
                "outputSize": 28,
                "outputItems": [
                    {
                        "_defocusU": "8968.909394499999",
                        "_defocusV": "8641.2885155",
                        "_defocusAngle": "19.7426435",
                        "_defocusRatio": "1.0379134290461822",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "3.143684",
                        "_fitQuality": "0.057344",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "15.698789000000033",
                        "_ctf2_defocusAngle_diff": "0.5747130000000027",
                        "_ctf2_resolution": "2.353",
                        "_ctf2_fitQuality": "0.15037",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "327.62087899999824",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputCTF_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "8740.7931445",
                        "_defocusV": "8491.944961",
                        "_defocusAngle": "22.65562",
                        "_defocusRatio": "1.0293040268917024",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "3.011597",
                        "_fitQuality": "0.055151",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "51.55007800000021",
                        "_ctf2_defocusAngle_diff": "1.8687599999999982",
                        "_ctf2_resolution": "2.669",
                        "_ctf2_fitQuality": "0.152262",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "248.84818350000023",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputCTF_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    },
                    {
                        "_defocusU": "9226.1686915",
                        "_defocusV": "9144.047617",
                        "_defocusAngle": "15.083498500000001",
                        "_defocusRatio": "1.0089808231474346",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "2.890161",
                        "_fitQuality": "0.052854",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "22.702617000000828",
                        "_ctf2_defocusAngle_diff": "25.393003",
                        "_ctf2_resolution": "2.401",
                        "_ctf2_fitQuality": "0.15583",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "82.12107449999894",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputCTF_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.jpg"
                    }
                ]
            },
            {
                "outputName": "6819.outputMicrographs",
                "outputType": "SetOfMicrographs",
                "outputSize": 28,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputMicrographs_0_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputMicrographs_0_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputMicrographs_0_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "6819.outputCTFDiscarded",
                "outputType": "SetOfCTF",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_defocusU": "7885.813633",
                        "_defocusV": "7584.1492579999995",
                        "_defocusAngle": "70.2433895",
                        "_defocusRatio": "1.0397756379440706",
                        "_psdFile": "Runs/006631_CistemProtCTFFind/extra/190117_02_00027_UnderDefocus0.9um_frameImage_aligned_mic_ctf.mrc",
                        "_micObj": "Micrograph (3710 x 3838, 0.49 \u212b/px)",
                        "_resolution": "716.76001",
                        "_fitQuality": "-0.008601",
                        "_consensus_resolution": "137.07551008366224",
                        "_ctf2_defocus_diff": "7129.6585159999995",
                        "_ctf2_defocusAngle_diff": "38.653220999999995",
                        "_ctf2_resolution": "2.471",
                        "_ctf2_fitQuality": "0.180592",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00027_UnderDefocus0.9um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "301.6643750000003",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputCTFDiscarded_190117_02_00027_UnderDefocus0.9um_frameImage_aligned_mic_ctf.jpg"
                    }
                ]
            },
            {
                "outputName": "6819.outputMicrographsDiscarded",
                "outputType": "SetOfMicrographs",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00027_UnderDefocus0.9um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00027_UnderDefocus0.9um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-10.271682', '-10.441606', '-10.526952', '-9.414958', '-9.124005', '-6.887777', '-7.584048', '-6.283511', '-5.972578', '-5.918865', '-6.263104', '-5.134215', '-5.34516', '-2.549648', '-4.903942', '-3.903651', '-2.31588', '-2.642243', '-2.374452', '-3.197363', '0.338576', '0.635848', '0.0', '1.488252', '1.317126', '0.876746', '0.480357', '3.811971', '1.752001', '2.100667', '0.988332', '2.1545', '4.099792', '1.423318', '5.570868', '3.253252', '4.89673', '6.988701', '10.066676', '4.676561', '6.172096', '5.269779', '6.192275', '6.87928', '3.566042', '5.059756', '5.672812', '7.586379', '4.980433', '6.826208']",
                        "_xmipp_ShiftY": "['-1.339689', '-8.489321', '-7.702424', '-6.410711', '-5.71614', '-7.462384', '-7.39155', '-4.972445', '-8.588434', '-5.892144', '-5.715113', '-4.774732', '-4.942741', '-4.836524', '-2.494215', '-2.499351', '-2.509047', '-1.933223', '-0.633099', '-2.302659', '-0.5034', '0.194674', '0.0', '0.027357', '-1.421562', '1.554448', '2.874998', '0.936944', '1.769017', '3.500605', '0.955815', '2.684173', '1.344137', '2.049206', '1.47346', '0.973854', '2.761447', '3.385886', '5.06146', '5.515896', '6.97123', '7.23835', '5.008478', '3.940797', '6.734641', '2.813111', '4.183703', '0.653671', '5.675986', '2.889876']",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819.outputMicrographsDiscarded_0_190117_02_00027_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "29/29 CTF processed (28 accepted and 1 discarded).*General Criteria*: - _Defocus_. Range: 4000 - 40000  - _Astigmatism_. Threshold: 1000  - _Resolution_. Threshold: 4   (1 discarded)*CTF consensus*: - _Consensus resolution. Threshold_: 4   (1 discarded)   > _Primary CTF_: cistem - ctffind4 (orphan - LegacyProtocol)   > _Reference CTF_: gctf - ctf estimation (orphan - LegacyProtocol)Input: SetOfCTF             (29 items) \nInput: SetOfCTF             (29 items) \nOutput: SetOfCTF             (28 items)SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px)SetOfCTF             (1 items)SetOfMicrographs (1 items, 3710 x 3838, 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6819_XmippProtCTFConsensus.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "6932",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 2.0,
        "doInitialCTF": true,
        "doOptimizeDefocus": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "refineAmplitudeContrast": false,
        "skipBorders": false,
        "lowRes": 0.05,
        "highRes": 0.5,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMicrographs": "6819.outputMicrographs",
        "ctfRelations": "6819.outputCTF",
        "output": [
            {
                "outputName": "6932.outputCTF",
                "outputType": "SetOfCTF",
                "outputSize": 28,
                "outputItems": [
                    {
                        "_defocusU": "8968.91",
                        "_defocusV": "8641.29",
                        "_defocusAngle": "19.7426",
                        "_defocusRatio": "1.0379133208120546",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.800286",
                        "_fitQuality": "0.167591",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.015688",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "0.0",
                        "_xmipp_ctfLongitudinalDisplacement": "24.1815",
                        "_xmipp_ctfTransversalDisplacement": "0.001011",
                        "_xmipp_ctfK": "0.337373",
                        "_xmipp_ctfBgGaussianK": "0.88074",
                        "_xmipp_ctfBgGaussianSigmaU": "4330.2",
                        "_xmipp_ctfBgGaussianSigmaV": "4214.79",
                        "_xmipp_ctfBgGaussianCU": "0.044525",
                        "_xmipp_ctfBgGaussianCV": "0.054942",
                        "_xmipp_ctfBgSqrtK": "0.717461",
                        "_xmipp_ctfBgSqrtU": "8.22343",
                        "_xmipp_ctfBgSqrtV": "7.10015",
                        "_xmipp_ctfBgSqrtAngle": "0.0",
                        "_xmipp_ctfBgBaseline": "0.913001",
                        "_xmipp_ctfBgGaussian2K": "0.108787",
                        "_xmipp_ctfBgGaussian2SigmaU": "2543.8",
                        "_xmipp_ctfBgGaussian2SigmaV": "4974.76",
                        "_xmipp_ctfBgGaussian2CU": "0.053045",
                        "_xmipp_ctfBgGaussian2CV": "0.075907",
                        "_xmipp_ctfBgGaussian2Angle": "27.1328",
                        "_xmipp_ctfCritCorr13": "0.792197",
                        "_xmipp_ctfCritIceness": "0.998322",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.948842",
                        "_xmipp_ctfCritPsdPCA1": "91.3139",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.360874",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.01869",
                        "_xmipp_ctfCritPsdCorr90": "0.318061",
                        "_xmipp_ctfCritPsdInt": "37.565463",
                        "_xmipp_ctfCritNormality": "588.019745",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "2.537292",
                        "_xmipp_ctfCritCtfMargin": "6.670449",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6932.outputCTF_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    },
                    {
                        "_defocusU": "8740.79",
                        "_defocusV": "8491.95",
                        "_defocusAngle": "22.6556",
                        "_defocusRatio": "1.0293030458257526",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.579211",
                        "_fitQuality": "0.169948",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.015424",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "9.48273e-13",
                        "_xmipp_ctfLongitudinalDisplacement": "71.666",
                        "_xmipp_ctfTransversalDisplacement": "0.000355229",
                        "_xmipp_ctfK": "0.40917",
                        "_xmipp_ctfBgGaussianK": "0.743783",
                        "_xmipp_ctfBgGaussianSigmaU": "4842.16",
                        "_xmipp_ctfBgGaussianSigmaV": "5532.32",
                        "_xmipp_ctfBgGaussianCU": "0.047784",
                        "_xmipp_ctfBgGaussianCV": "0.054077",
                        "_xmipp_ctfBgSqrtK": "0.417844",
                        "_xmipp_ctfBgSqrtU": "7.83716",
                        "_xmipp_ctfBgSqrtV": "5.42669",
                        "_xmipp_ctfBgSqrtAngle": "16.8395",
                        "_xmipp_ctfBgBaseline": "0.902842",
                        "_xmipp_ctfBgGaussian2K": "0.095105",
                        "_xmipp_ctfBgGaussian2SigmaU": "1795.56",
                        "_xmipp_ctfBgGaussian2SigmaV": "517.13",
                        "_xmipp_ctfBgGaussian2CU": "0.140527",
                        "_xmipp_ctfBgGaussian2CV": "0.139108",
                        "_xmipp_ctfBgGaussian2Angle": "0.760797",
                        "_xmipp_ctfCritCorr13": "0.80843",
                        "_xmipp_ctfCritIceness": "1.00723",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.948568",
                        "_xmipp_ctfCritPsdPCA1": "90.2871",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.217268",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.014557",
                        "_xmipp_ctfCritPsdCorr90": "0.329398",
                        "_xmipp_ctfCritPsdInt": "38.940165",
                        "_xmipp_ctfCritNormality": "626.435379",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "2.209644",
                        "_xmipp_ctfCritCtfMargin": "7.807734",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6932.outputCTF_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    },
                    {
                        "_defocusU": "9226.17",
                        "_defocusV": "9144.05",
                        "_defocusAngle": "15.0835",
                        "_defocusRatio": "1.0089807032988665",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.97",
                        "_fitQuality": "0.169185",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.01531",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "0.0",
                        "_xmipp_ctfLongitudinalDisplacement": "33.013",
                        "_xmipp_ctfTransversalDisplacement": "0.000816272",
                        "_xmipp_ctfK": "0.294536",
                        "_xmipp_ctfBgGaussianK": "0.691077",
                        "_xmipp_ctfBgGaussianSigmaU": "9955.51",
                        "_xmipp_ctfBgGaussianSigmaV": "7529.92",
                        "_xmipp_ctfBgGaussianCU": "0.048942",
                        "_xmipp_ctfBgGaussianCV": "0.051337",
                        "_xmipp_ctfBgSqrtK": "1.42489",
                        "_xmipp_ctfBgSqrtU": "8.49329",
                        "_xmipp_ctfBgSqrtV": "8.50932",
                        "_xmipp_ctfBgSqrtAngle": "1.41899e-08",
                        "_xmipp_ctfBgBaseline": "0.910302",
                        "_xmipp_ctfBgGaussian2K": "0.060782",
                        "_xmipp_ctfBgGaussian2SigmaU": "1832.36",
                        "_xmipp_ctfBgGaussian2SigmaV": "4024.46",
                        "_xmipp_ctfBgGaussian2CU": "0.1387",
                        "_xmipp_ctfBgGaussian2CV": "0.135868",
                        "_xmipp_ctfBgGaussian2Angle": "20.4836",
                        "_xmipp_ctfCritCorr13": "0.77672",
                        "_xmipp_ctfCritIceness": "1.00236",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.949098",
                        "_xmipp_ctfCritPsdPCA1": "90.5052",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.649585",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.00456",
                        "_xmipp_ctfCritPsdCorr90": "0.370929",
                        "_xmipp_ctfCritPsdInt": "38.398675",
                        "_xmipp_ctfCritNormality": "597.6998",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "1.270584",
                        "_xmipp_ctfCritCtfMargin": "7.223919",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6932.outputCTF_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    }
                ]
            }
        ],
        "summary": "CTF estimation of 28 micrographs.Input: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nInput: SetOfCTF             (28 items) \nOutput: SetOfCTF             (28 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6932_XmippProtCTFMicrographs.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "6988",
        "object.label": "xmipp3 - ctf consensus GCTF+CTFFind4+Xmipp",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 4.0,
        "useCritXmipp": true,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 4.0,
        "calculateConsensus": true,
        "minConsResol": 4.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF2": "6819.outputCTF",
        "inputCTF": "6932.outputCTF",
        "output": [
            {
                "outputName": "6988.outputCTF",
                "outputType": "SetOfCTF",
                "outputSize": 28,
                "outputItems": [
                    {
                        "_defocusU": "8968.90969725",
                        "_defocusV": "8641.28925775",
                        "_defocusAngle": "19.742621749999998",
                        "_defocusRatio": "1.0379133749291136",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.800286",
                        "_fitQuality": "0.167591",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.015688",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "0.0",
                        "_xmipp_ctfLongitudinalDisplacement": "24.1815",
                        "_xmipp_ctfTransversalDisplacement": "0.001011",
                        "_xmipp_ctfK": "0.337373",
                        "_xmipp_ctfBgGaussianK": "0.88074",
                        "_xmipp_ctfBgGaussianSigmaU": "4330.2",
                        "_xmipp_ctfBgGaussianSigmaV": "4214.79",
                        "_xmipp_ctfBgGaussianCU": "0.044525",
                        "_xmipp_ctfBgGaussianCV": "0.054942",
                        "_xmipp_ctfBgSqrtK": "0.717461",
                        "_xmipp_ctfBgSqrtU": "8.22343",
                        "_xmipp_ctfBgSqrtV": "7.10015",
                        "_xmipp_ctfBgSqrtAngle": "0.0",
                        "_xmipp_ctfBgBaseline": "0.913001",
                        "_xmipp_ctfBgGaussian2K": "0.108787",
                        "_xmipp_ctfBgGaussian2SigmaU": "2543.8",
                        "_xmipp_ctfBgGaussian2SigmaV": "4974.76",
                        "_xmipp_ctfBgGaussian2CU": "0.053045",
                        "_xmipp_ctfBgGaussian2CV": "0.075907",
                        "_xmipp_ctfBgGaussian2Angle": "27.1328",
                        "_xmipp_ctfCritCorr13": "0.792197",
                        "_xmipp_ctfCritIceness": "0.998322",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.948842",
                        "_xmipp_ctfCritPsdPCA1": "91.3139",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.360874",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.01869",
                        "_xmipp_ctfCritPsdCorr90": "0.318061",
                        "_xmipp_ctfCritPsdInt": "37.565463",
                        "_xmipp_ctfCritNormality": "588.019745",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "2.537292",
                        "_xmipp_ctfCritCtfMargin": "6.670449",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "15.698789000000033",
                        "_ctf2_defocusAngle_diff": "0.5747130000000027",
                        "_ctf2_resolution": "2.353",
                        "_ctf2_fitQuality": "0.15037",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "327.6204394999986",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputCTF_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    },
                    {
                        "_defocusU": "8740.79157225",
                        "_defocusV": "8491.947480499999",
                        "_defocusAngle": "22.65561",
                        "_defocusRatio": "1.029303536358582",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.579211",
                        "_fitQuality": "0.169948",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.015424",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "9.48273e-13",
                        "_xmipp_ctfLongitudinalDisplacement": "71.666",
                        "_xmipp_ctfTransversalDisplacement": "0.000355229",
                        "_xmipp_ctfK": "0.40917",
                        "_xmipp_ctfBgGaussianK": "0.743783",
                        "_xmipp_ctfBgGaussianSigmaU": "4842.16",
                        "_xmipp_ctfBgGaussianSigmaV": "5532.32",
                        "_xmipp_ctfBgGaussianCU": "0.047784",
                        "_xmipp_ctfBgGaussianCV": "0.054077",
                        "_xmipp_ctfBgSqrtK": "0.417844",
                        "_xmipp_ctfBgSqrtU": "7.83716",
                        "_xmipp_ctfBgSqrtV": "5.42669",
                        "_xmipp_ctfBgSqrtAngle": "16.8395",
                        "_xmipp_ctfBgBaseline": "0.902842",
                        "_xmipp_ctfBgGaussian2K": "0.095105",
                        "_xmipp_ctfBgGaussian2SigmaU": "1795.56",
                        "_xmipp_ctfBgGaussian2SigmaV": "517.13",
                        "_xmipp_ctfBgGaussian2CU": "0.140527",
                        "_xmipp_ctfBgGaussian2CV": "0.139108",
                        "_xmipp_ctfBgGaussian2Angle": "0.760797",
                        "_xmipp_ctfCritCorr13": "0.80843",
                        "_xmipp_ctfCritIceness": "1.00723",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.948568",
                        "_xmipp_ctfCritPsdPCA1": "90.2871",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.217268",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.014557",
                        "_xmipp_ctfCritPsdCorr90": "0.329398",
                        "_xmipp_ctfCritPsdInt": "38.940165",
                        "_xmipp_ctfCritNormality": "626.435379",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "2.209644",
                        "_xmipp_ctfCritCtfMargin": "7.807734",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "51.55007800000021",
                        "_ctf2_defocusAngle_diff": "1.8687599999999982",
                        "_ctf2_resolution": "2.669",
                        "_ctf2_fitQuality": "0.152262",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "248.8440917500011",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputCTF_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    },
                    {
                        "_defocusU": "9226.16934575",
                        "_defocusV": "9144.0488085",
                        "_defocusAngle": "15.083499250000001",
                        "_defocusRatio": "1.008980763223143",
                        "_psdFile": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf.psd",
                        "_micObj": "Micrograph (3710 x 3838, 0.99 \u212b/px)",
                        "_resolution": "2.97",
                        "_fitQuality": "0.169185",
                        "_xmipp_ctfChromaticAberration": "3.0",
                        "_xmipp_ctfEnergyLoss": "0.01531",
                        "_xmipp_ctfLensStability": "0.0",
                        "_xmipp_ctfConvergenceCone": "0.0",
                        "_xmipp_ctfLongitudinalDisplacement": "33.013",
                        "_xmipp_ctfTransversalDisplacement": "0.000816272",
                        "_xmipp_ctfK": "0.294536",
                        "_xmipp_ctfBgGaussianK": "0.691077",
                        "_xmipp_ctfBgGaussianSigmaU": "9955.51",
                        "_xmipp_ctfBgGaussianSigmaV": "7529.92",
                        "_xmipp_ctfBgGaussianCU": "0.048942",
                        "_xmipp_ctfBgGaussianCV": "0.051337",
                        "_xmipp_ctfBgSqrtK": "1.42489",
                        "_xmipp_ctfBgSqrtU": "8.49329",
                        "_xmipp_ctfBgSqrtV": "8.50932",
                        "_xmipp_ctfBgSqrtAngle": "1.41899e-08",
                        "_xmipp_ctfBgBaseline": "0.910302",
                        "_xmipp_ctfBgGaussian2K": "0.060782",
                        "_xmipp_ctfBgGaussian2SigmaU": "1832.36",
                        "_xmipp_ctfBgGaussian2SigmaV": "4024.46",
                        "_xmipp_ctfBgGaussian2CU": "0.1387",
                        "_xmipp_ctfBgGaussian2CV": "0.135868",
                        "_xmipp_ctfBgGaussian2Angle": "20.4836",
                        "_xmipp_ctfCritCorr13": "0.77672",
                        "_xmipp_ctfCritIceness": "1.00236",
                        "_xmipp_CtfDownsampleFactor": "2.0",
                        "_xmipp_ctfCritPsdStdQ": "0.949098",
                        "_xmipp_ctfCritPsdPCA1": "90.5052",
                        "_xmipp_ctfCritPsdPCARuns": "9.6804",
                        "_xmipp_ctfCritFirstZero": "13.649585",
                        "_xmipp_ctfCritDamping": "0.0",
                        "_xmipp_ctfCritfirstZeroRatio": "1.00456",
                        "_xmipp_ctfCritPsdCorr90": "0.370929",
                        "_xmipp_ctfCritPsdInt": "38.398675",
                        "_xmipp_ctfCritNormality": "597.6998",
                        "_xmipp_ctfQ0": "0.1",
                        "_xmipp_ctfSphericalAberration": "2.7",
                        "_xmipp_ctfVoltage": "300.0",
                        "_xmipp_ctfSamplingRate": "0.495",
                        "_xmipp_enhanced_psd": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_enhanced_psd.xmp",
                        "_xmipp_ctfmodel_quadrant": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.xmp",
                        "_xmipp_ctfmodel_halfplane": "Runs/006932_XmippProtCTFMicrographs/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_halfplane.xmp",
                        "_xmipp_ctfCritNonAstigmaticValidty": "1.270584",
                        "_xmipp_ctfCritCtfMargin": "7.223919",
                        "_consensus_resolution": "2.0",
                        "_ctf2_defocus_diff": "22.702617000000828",
                        "_ctf2_defocusAngle_diff": "25.393003",
                        "_ctf2_resolution": "2.401",
                        "_ctf2_fitQuality": "0.15583",
                        "_ctf2_psdFile": "Runs/006692_ProtGctf/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_ctf.mrc",
                        "_astigmatism": "82.12053725000078",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputCTF_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic_xmipp_ctf_ctfmodel_quadrant.jpg"
                    }
                ]
            },
            {
                "outputName": "6988.outputMicrographs",
                "outputType": "SetOfMicrographs",
                "outputSize": 28,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-17.295279', '-14.311417', '-13.087984', '-13.003716', '-12.751066', '-11.917467', '-11.065119', '-9.804227', '-9.667533', '-9.589952', '-8.931556', '-9.284183', '-7.179857', '-8.96849', '-9.82705', '-7.487503', '-6.122445', '-4.133838', '-4.714905', '-3.991674', '-3.666223', '-2.482463', '-1.561215', '-0.68201', '-2.20722', '0.0', '1.306926', '2.644098', '3.878137', '4.48569', '4.319798', '5.370443', '6.595577', '7.850777', '8.072894', '8.673738', '9.817101', '11.521026', '11.297667', '12.80082', '12.258426', '13.998658', '15.579132', '13.945471', '14.957984', '16.212351', '15.883403', '17.404175', '16.834414', '17.676363']",
                        "_xmipp_ShiftY": "['5.963423', '10.158191', '10.789815', '9.069223', '8.882469', '8.994506', '8.52845', '8.149759', '7.022429', '6.739248', '5.347564', '4.921046', '5.008191', '2.478463', '0.285067', '1.558676', '1.368235', '1.206532', '0.117775', '0.822058', '0.272571', '-1.177386', '0.075098', '0.40407', '-1.153349', '0.0', '-1.363881', '-3.331064', '-2.874714', '-1.224728', '-1.012363', '-3.601733', '-3.200763', '-3.987845', '-5.759534', '-7.438296', '-7.323859', '-5.794031', '-6.564627', '-7.606271', '-8.324961', '-7.745219', '-7.431204', '-7.248763', '-6.951803', '-8.542995', '-6.170729', '-3.901033', '-6.377761', '-5.103128']",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputMicrographs_0_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00002_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.998022', '-12.164094', '-12.497605', '-11.282489', '-12.101603', '-10.723919', '-10.594351', '-9.756842', '-9.69839', '-9.914049', '-9.615789', '-9.987253', '-8.937699', '-9.298427', '-8.028446', '-6.984542', '-6.014479', '-5.491549', '-5.219156', '-4.423597', '-4.103129', '-4.826677', '-2.82909', '-2.800719', '0.0', '1.420936', '1.9578', '2.252569', '2.754958', '2.951303', '3.788214', '3.800102', '4.908455', '4.857774', '6.846924', '6.36409', '7.344408', '8.216078', '9.25697', '10.17107', '10.773628', '11.980257', '11.8496', '12.509253', '11.175228', '12.237312', '12.445181', '13.013222', '12.474201', '12.689119']",
                        "_xmipp_ShiftY": "['-13.778257', '-11.756973', '-10.940054', '-8.413887', '-7.723258', '-7.397274', '-8.316111', '-7.71458', '-6.844682', '-9.561598', '-7.750355', '-4.986663', '-6.604599', '-6.379768', '-5.639765', '-5.454648', '-5.772969', '-6.167333', '-5.730337', '-5.421397', '-4.392679', '-2.351671', '-1.940643', '-1.210016', '0.0', '1.944092', '2.019788', '2.302731', '2.027847', '3.164449', '2.313043', '3.205956', '2.907576', '4.019144', '3.802851', '4.898752', '4.959659', '5.583404', '3.948689', '7.246001', '7.526979', '4.600457', '7.539061', '8.473277', '7.787569', '6.302948', '8.16067', '5.736559', '9.07496', '10.136586']",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputMicrographs_0_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/006458_XmippProtMovieCorr/extra/190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.mrc",
                        "_samplingRate": "0.495",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00003_UnderDefocus0.7um_frameImage.tiff",
                        "plotCart": "Image (800 x 600, 99999.00 \u212b/px)",
                        "psdCorr": "Image (384 x 384, 99999.00 \u212b/px)",
                        "_xmipp_ShiftX": "['-12.6551', '-12.439894', '-11.627308', '-11.203875', '-10.304249', '-10.143049', '-9.449692', '-8.034675', '-8.042789', '-7.199077', '-6.03835', '-5.760084', '-7.103127', '-5.76354', '-4.350493', '-5.615465', '-4.987977', '-4.662868', '-4.182751', '-3.088989', '-3.601022', '-2.172985', '-1.052787', '0.0', '0.412823', '0.421791', '2.673962', '1.225255', '3.902922', '4.487449', '4.636817', '4.431326', '4.744692', '5.15601', '5.481744', '5.446569', '6.126377', '5.434271', '6.73193', '7.999902', '8.104754', '8.927931', '11.123323', '10.709698', '9.865351', '11.151437', '11.49485', '10.02302', '11.502712', '12.216111']",
                        "_xmipp_ShiftY": "['-11.842171', '-10.935101', '-10.04479', '-9.5676', '-9.4252', '-9.178026', '-8.520573', '-9.081343', '-7.822988', '-6.100923', '-7.502412', '-7.71903', '-5.804314', '-6.2638', '-5.951747', '-6.051655', '-5.151893', '-4.39816', '-4.989065', '-3.514977', '-2.234656', '-2.391586', '-1.874899', '0.0', '-0.324063', '1.733704', '1.825776', '2.423951', '3.288779', '4.223785', '4.23042', '3.639918', '2.870471', '5.860878', '8.156516', '8.285213', '8.367685', '9.143805', '9.146267', '10.173537', '10.941573', '9.996774', '10.905869', '10.359124', '11.793199', '11.777867', '12.142463', '13.52394', '13.879405', '14.116635']",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988.outputMicrographs_0_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "28/28 CTF processed (28 accepted and 0 discarded).*General Criteria*: - _Defocus_. Range: 4000 - 40000  - _Astigmatism_. Threshold: 1000  - _Resolution_. Threshold: 4 *Xmipp criteria*: - _First zero_. Threshold: 5  - _First zero astigmatism_. Range: 0.90 - 1.10  - _Correlation Experimental-Estimated_. Threshold: 0.05  - _CTF margin_. Threshold: 1.50  - _Iceness_. Threshold: 1.05  - _Non Astigmatic validation range_: 0.30 - 4.00 *CTF consensus*: - _Consensus resolution. Threshold_: 4    > _Primary CTF_: xmipp3 - ctf estimation   > _Reference CTF_: xmipp3 - ctf consensus GCTF+CTFFind4 (xmipp3 - ctf consensus)Input: SetOfCTF             (28 items) \nInput: SetOfCTF             (28 items) \nOutput: SetOfCTF             (28 items)SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/6988_XmippProtCTFConsensus.log",
        "label": [
            "Micrographs"
        ],
        "labelColor": [
            "#e57373"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "7076",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "6988.outputMicrographs",
        "output": [
            {
                "outputName": "7076.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 4291,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7076.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7076.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7076.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCoordinates (4291 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7076_LegacyProtocol.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "7124",
        "object.label": "eman2 - sparx gaussian picker",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "6988.outputMicrographs",
        "output": [
            {
                "outputName": "7124.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 6656,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7124.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7124.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7124.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCoordinates (6656 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7124_LegacyProtocol.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "7160",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "6988.outputMicrographs",
        "output": [
            {
                "outputName": "7160.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 4511,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7160.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7160.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7160.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "7160.boxsize",
                "outputType": "Integer",
                "outputItems": [
                    {
                        "item_id": 7252
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCoordinates (4511 items,  300 x 300)300",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7160_LegacyProtocol.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.0.5"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "7212",
        "object.label": "xmipp3 - manual-picking (step 1)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "doInteractive": true,
        "inputMicrographs": "6988.outputMicrographs",
        "output": [
            {
                "outputName": "7212.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 764,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7212.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7212.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7212.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "7212.boxsize",
                "outputType": "Integer",
                "outputItems": [
                    {
                        "item_id": 7261
                    }
                ]
            }
        ],
        "summary": "Number of input micrographs: 28*outputCoordinates:* \n Number of particles picked: 764\nParticle size: 300 *boxsize:* \n  Input: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfCoordinates (764 items,  300 x 300)300",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7212_XmippProtParticlePicking.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "7262",
        "object.label": "xmipp3 - auto-picking (step 2)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "7212.",
        "output": [
            {
                "outputName": "7262.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 3731,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7262.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7262.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7262.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Number of input micrographs: 28*outputCoordinates:* \n Previous run: xmipp3 - manual-picking (step 1)\nManual particles picked: 42\nParticle size:300\nAutopick: Yes\nAutomatic particles picked: 722\nLast micrograph: 190117_02_00005_UnderDefocus0.7um_frameImage_aligned_mic Input: 764 particles picked (from 28 micrographs) \nOutput: SetOfCoordinates (3731 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7262_XmippParticlePickingAutomatic.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtScreenDeepConsensus",
        "object.id": "7306",
        "object.label": "xmipp3 - deep consensus picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "modelInitialization": 0,
        "skipTraining": false,
        "inputCoordinates": [
            "7262.outputCoordinates",
            "7160.outputCoordinates",
            "7124.outputCoordinates",
            "7076.outputCoordinates"
        ],
        "consensusRadius": 0.1,
        "threshold": 0.5,
        "notePreprocess": null,
        "skipInvert": false,
        "ignoreCTF": true,
        "nEpochs": 50.0,
        "learningRate": 0.0001,
        "auto_stopping": true,
        "l2RegStrength": 1e-05,
        "nModels": 3,
        "toTrainDataSize": 20000,
        "doTesting": false,
        "addTrainingData": 1,
        "trainingDataType": 1,
        "trainPosWeight": 1,
        "trainNegWeight": 1,
        "doPreliminarPredictions": false,
        "extractingBatch": 5,
        "trainingBatch": 5,
        "output": [
            {
                "outputName": "7306.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 4006,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "7306.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 15054,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.99979",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_1_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.993737",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_2_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.993502",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_3_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.999419",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_4_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.995642",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_5_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.999105",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_6_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.997635",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_7_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.99863",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_8_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.998737",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_9_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.999695",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_10_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.977532",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_11_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.884984",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_12_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.99452",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_13_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.995554",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_14_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/007306_XmippProtScreenDeepConsensus/extra/consensus_parts_OR/190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.stk",
                        "_samplingRate": "1.16015625",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "17",
                        "_classId": "None",
                        "_xmipp_zScoreDeepLearning1": "0.998618",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306.outputParticles_15_190117_02_00017_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Data source  1 xmipp3 - auto-picking (step 2)Data source  2 orphan - LegacyProtocolData source  3 orphan - LegacyProtocolData source  4 orphan - LegacyProtocolRelative Radius = 0.100000\nThe output contains the OR junction of all the input coordinates with a 'zScoreDeepLearning1' value attached.\nPlease, click on 'Analyze Results' to make a subset.Input: SetOfCoordinates (3731 items,  300 x 300) \nInput: SetOfCoordinates (4511 items,  300 x 300) \nInput: SetOfCoordinates (6656 items,  300 x 300) \nInput: SetOfCoordinates (4291 items,  300 x 300) \nOutput: SetOfCoordinates (4006 items,  300 x 300)SetOfParticles (15054 items, 128 x 128, 1.16 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7306_XmippProtScreenDeepConsensus.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtDeepConsSubSet",
        "object.id": "7405",
        "object.label": "create subset 0.5",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "deepCons",
        "sqliteFile": "Runs/007306_XmippProtScreenDeepConsensus/particles_state.sqlite,",
        "outputClassName": "SetOfCoordinates",
        "inputObject": "7306.outputCoordinates",
        "output": [
            {
                "outputName": "7405.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 4006,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7405.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7405.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7405.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "From input SetOfCoordinates of size 4006 created output SetOfCoordinates of size 4006 Input: SetOfCoordinates (4006 items,  300 x 300) \nOutput: SetOfCoordinates (4006 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7405_XmippProtDeepConsSubSet.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtDeepMicrographScreen",
        "object.id": "7445",
        "object.label": "xmipp3 - deep micrograph cleaner",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsSource": 0,
        "useOtherScale": 0,
        "threshold": -1.0,
        "streamingBatchSize": -1,
        "saveMasks": false,
        "useGpu": true,
        "gpuList": "0",
        "inputCoordinates": "7405.outputCoordinates",
        "output": [
            {
                "outputName": "7445.outputCoordinates_Full",
                "outputType": "SetOfCoordinates",
                "outputSize": 4006,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Full_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Full_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Full_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "7445.outputCoordinates_Manual_097",
                "outputType": "SetOfCoordinates",
                "outputSize": 3968,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Manual_097_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Manual_097_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445.outputCoordinates_Manual_097_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Micrographs source: same as coordinatesCoordinates scale: 1Input: SetOfCoordinates (4006 items,  300 x 300) \nOutput: SetOfCoordinates (4006 items,  300 x 300)SetOfCoordinates (3968 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7445_XmippProtDeepMicrographScreen.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "7502",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.5,
        "boxSize": 120,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "ctfRelations": "6988.outputCTF",
        "inputCoordinates": "7445.outputCoordinates_Manual_097",
        "output": [
            {
                "outputName": "7502.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 3950,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155432",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_1_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155201",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_2_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.15543",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_3_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155745",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_4_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.158503",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_5_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155461",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_6_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.161446",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_7_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155704",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_8_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.160934",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_9_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155053",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_10_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155041",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_11_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155232",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_12_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155442",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_13_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155755",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_14_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155584",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502.outputParticles_15_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Micrographs source: same as pickingParticle box size: 120Particles extracted: 3950Input: SetOfCoordinates (3968 items,  300 x 300) \nInput: SetOfCTF             (28 items) \nOutput: SetOfParticles (3950 items, 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7502_XmippProtExtractParticles.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "7846",
        "object.label": "cryosparc2 - initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "8478.outputParticles",
        "output": [
            {
                "outputName": "7846.outputClasses",
                "outputType": "SetOfClasses3D",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_size": "3491",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/007846_ProtCryoSparcInitialModel/classes3D.sqlite', 'Class001']",
                        "_representative": "Volume (64 x 64 x 64, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "Projection",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7846.outputClasses_cryosparc_P2_J8_class_00_final_volume"
                    }
                ]
            },
            {
                "outputName": "7846.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/007846_ProtCryoSparcInitialModel/extra/J8/cryosparc_P2_J8_class_00_final_volume.mrc:mrc",
                        "_samplingRate": "2.3203125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7846.outputVolumes_cryosparc_P2_J8_class_00_final_volume"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3491 items, 120 x 120, 1.24 \u212b/px) \nOutput: SetOfClasses3D       (1 items)SetOfVolumes (1 items, 64 x 64 x 64, 2.32 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7846_LegacyProtocol.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.1.6"
    },
    {
        "object.className": "XmippProtRansac",
        "object.id": "7920",
        "object.label": "xmipp3 - ransac",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "symmetryGroup": "o",
        "angularSampling": 5.0,
        "nRansac": 400,
        "dimRed": false,
        "numGrids": 3,
        "numSamples": 8,
        "corrThresh": 0.77,
        "numVolumes": 10,
        "numIter": 10,
        "maxFreq": 12,
        "useAll": false,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "inputSet": "8478.outputClasses",
        "output": [
            {
                "outputName": "7920.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 10,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00000.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.384349",
                        "_xmipp_volScoreSumTh": "6.124349",
                        "_xmipp_volScoreMean": "0.931167",
                        "_xmipp_volScoreMin": "0.849843",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00000"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00001.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.379097",
                        "_xmipp_volScoreSumTh": "6.119097",
                        "_xmipp_volScoreMean": "0.931029",
                        "_xmipp_volScoreMin": "0.849199",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00001"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00002.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.376033",
                        "_xmipp_volScoreSumTh": "6.116033",
                        "_xmipp_volScoreMean": "0.930948",
                        "_xmipp_volScoreMin": "0.845786",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00002"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00003.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.377843",
                        "_xmipp_volScoreSumTh": "6.117843",
                        "_xmipp_volScoreMean": "0.930996",
                        "_xmipp_volScoreMin": "0.849625",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00003"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00004.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.369566",
                        "_xmipp_volScoreSumTh": "6.109566",
                        "_xmipp_volScoreMean": "0.930778",
                        "_xmipp_volScoreMin": "0.850491",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00004"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00005.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.37937",
                        "_xmipp_volScoreSumTh": "6.11937",
                        "_xmipp_volScoreMean": "0.931036",
                        "_xmipp_volScoreMin": "0.850305",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00005"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00006.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.37704",
                        "_xmipp_volScoreSumTh": "6.11704",
                        "_xmipp_volScoreMean": "0.930975",
                        "_xmipp_volScoreMin": "0.850535",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00006"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00007.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.387326",
                        "_xmipp_volScoreSumTh": "6.127326",
                        "_xmipp_volScoreMean": "0.931245",
                        "_xmipp_volScoreMin": "0.845861",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00007"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00008.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.382652",
                        "_xmipp_volScoreSumTh": "6.122652",
                        "_xmipp_volScoreMean": "0.931122",
                        "_xmipp_volScoreMin": "0.849019",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00008"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/007920_XmippProtRansac/proposedVolume00009.vol",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "_xmipp_volScoreSum": "35.381846",
                        "_xmipp_volScoreSumTh": "6.121846",
                        "_xmipp_volScoreMean": "0.931101",
                        "_xmipp_volScoreMin": "0.849741",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920.outputVolumes_proposedVolume00009"
                    }
                ]
            }
        ],
        "summary": "RANSAC iterations: 400Number of volumes to refine: 10Number of refinement interations: 10Input: SetOfClasses2D       (38 items) \nOutput: SetOfVolumes (10 items, 120 x 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7920_XmippProtRansac.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "7983",
        "object.label": "relion - 3D initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "8478.outputParticles",
        "output": [
            {
                "outputName": "7983.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/007983_ProtRelionInitialModel/extra/relion_it300_class001.mrc",
                        "_samplingRate": "1.2375",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8137,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputVolume_relion_it300_class001"
                    }
                ]
            },
            {
                "outputName": "7983.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 3491,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.54168875  0.83514647  0.09541318 -3.62042679]\n [-0.81549695  0.4946071   0.30054707 -5.97978046]\n [ 0.20380879 -0.24061213  0.9489825   2.25783083]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155432",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_1_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.98295105  0.18046864 -0.03518948  1.73198976]\n [-0.16611464 -0.78958318  0.59073203  2.06267305]\n [ 0.07882358  0.58650616  0.8061001  -1.43597452]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155201",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_2_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.58404001  0.81055841 -0.04350099 -2.41085623]\n [-0.64037463  0.49302285  0.58893871  0.25472848]\n [ 0.4988162  -0.31610684  0.80700611 -0.3158515 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.15543",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_3_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.99152008 -0.09852628 -0.08473782  4.35462619]\n [ 0.09230808 -0.99294578  0.07441705  3.59795757]\n [-0.0914721   0.06596401  0.99362045  0.10190226]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155745",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_4_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.40928828  0.90967778 -0.07049429  2.12611994]\n [-0.85272514 -0.35388944  0.38421621 -0.57365561]\n [ 0.32456576  0.21736744  0.92054791  0.40224641]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.158503",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_5_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.14509696 -0.9236665  -0.35466473 -0.45869404]\n [ 0.88077868 -0.2838849   0.37899642  0.25617607]\n [-0.45075026 -0.2573899   0.85473659 -0.30392101]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155461",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_6_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.97310275 -0.21677746  0.07796521  0.16910577]\n [ 0.22694256 -0.84387674  0.48617807  0.08767869]\n [-0.03959942  0.49079484  0.87037481 -0.06412389]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.161446",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_7_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.91960261 -0.19315655 -0.34208418  0.04359688]\n [ 0.30880465  0.89368588  0.32552303 -2.93104605]\n [ 0.24283889 -0.40498901  0.88148351  1.09932493]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155704",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_8_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.94234673  0.27877408 -0.18511524  0.9873762 ]\n [-0.313027   -0.92990616  0.19310265  1.84944726]\n [-0.11830778  0.23991572  0.96355784 -0.18094896]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.160934",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_9_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.92094179 -0.38413443 -0.06562748  0.40266328]\n [ 0.35120632 -0.89109878  0.28739707  5.60306741]\n [-0.16887968  0.24162719  0.95556055 -1.65753953]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155053",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_10_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.42872339 -0.89555142 -0.11909619  2.13353953]\n [ 0.90311766  0.42133407  0.0828015  -0.80745909]\n [-0.02397372 -0.14305681  0.98942408  0.32438593]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155232",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_12_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.33009725  0.93640371 -0.11909619 -0.52525935]\n [-0.93652881  0.34067243  0.0828015  -1.68641519]\n [ 0.11810842  0.08420447  0.98942408  0.07790523]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155442",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_13_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.77818159  0.62413746  0.06989882 -3.30748292]\n [-0.55656686 -0.73690276  0.38367648  1.81716284]\n [ 0.2909755   0.25966661  0.92081839 -0.50608623]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155755",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_14_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.92650055 -0.21045927 -0.31193528  3.20623886]\n [ 0.12875249 -0.95623622  0.26274528 -1.64164725]\n [-0.353581    0.2032712   0.91305054  1.56779283]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155584",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_15_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "16",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.61185497  0.77616011 -0.15234493  1.0745638 ]\n [-0.75625753  0.63048204  0.17483404 -0.09737199]\n [ 0.23174995  0.00823893  0.9727405   0.18579291]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155715",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 16,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983.outputParticles_16_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3491 items, 120 x 120, 1.24 \u212b/px) \nOutput: Volume (120 x 120 x 120, 1.24 \u212b/px)SetOfParticles (3491 items, 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/7983_LegacyProtocol.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "8046",
        "object.label": "xmipp3 - extract particles 2/3 size",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.5,
        "boxSize": 250,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "ctfRelations": "6988.outputCTF",
        "inputCoordinates": "8544.outputCoordinates",
        "output": [
            {
                "outputName": "8046.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 3215,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256707",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_1_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.234359",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_2_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.260546",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_3_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266866",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_5_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.25964",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_7_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.254098",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_12_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.234176",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_13_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266425",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_14_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7424999999999999",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=None, res=2.97, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Micrographs source: same as pickingParticle box size: 250Particles extracted: 3215Input: SetOfCoordinates (3356 items,  300 x 300) \nInput: SetOfCTF             (28 items) \nOutput: SetOfParticles (3215 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8046_XmippProtExtractParticles.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtReconstructSignificant",
        "object.id": "8163",
        "object.label": "xmipp3 - reconstruct significant",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": false,
        "gpuList": "0",
        "symmetryGroup": "o",
        "thereisRefVolume": false,
        "angularSampling": 5.0,
        "minTilt": 0.0,
        "maxTilt": 180.0,
        "maximumShift": -1.0,
        "keepIntermediate": false,
        "useMaxRes": false,
        "maxResolution": 12.0,
        "alpha0": 98.0,
        "iter": 50,
        "alphaF": 99.999,
        "useImed": true,
        "strictDir": false,
        "angDistance": 10,
        "dontApplyFisher": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputSet": "8478.outputClasses",
        "output": [
            {
                "outputName": "8163.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/008163_XmippProtReconstructSignificant/extra/volume_iter050.vol",
                        "_samplingRate": "1.2375",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8606,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8163.outputVolume_volume_iter050"
                    }
                ]
            }
        ],
        "summary": "Input classes: [[sci-open:8510][8478.outputClasses.8510]]Starting from: 1 random volumeSignificance from 98.000000% to 99.999000% in 50 iterationsIMED usedInput: SetOfClasses2D       (38 items) \nOutput: Volume (120 x 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8163_XmippProtReconstructSignificant.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "8318",
        "object.label": "cryosparc2 - 2d classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "7502.outputParticles",
        "output": [
            {
                "outputName": "8318.outputClasses",
                "outputType": "SetOfClasses2D",
                "outputSize": 50,
                "outputItems": [
                    {
                        "_size": "26",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class001']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_1_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "47",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class002']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_2_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "96",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class003']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_3_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "43",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class004']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_4_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class005']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_5_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "26",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class006']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_6_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "239",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class007']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_7_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "62",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class008']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_8_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "47",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class009']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_9_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "137",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class010']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_10_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "199",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class011']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_11_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "164",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class012']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_12_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class013']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_13_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "31",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class014']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_14_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "169",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class015']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_15_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "138",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class016']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 16,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_16_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class017']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_17_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class018']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_18_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "66",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class019']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_19_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "113",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class020']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_20_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "139",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class021']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 21,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_21_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "51",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class022']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_22_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "50",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class023']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 23,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_23_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "29",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class024']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_24_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "178",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class025']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 25,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_25_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "95",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class026']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_26_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "132",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class027']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_27_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "35",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class028']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_28_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "31",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class029']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 29,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_29_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "38",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class030']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 30,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_30_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "163",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class031']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 31,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_31_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "63",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class032']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 32,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_32_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "25",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class033']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 33,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_33_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class034']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 34,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_34_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "44",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class035']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 35,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_35_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "22",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class036']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 36,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_36_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "218",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class037']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 37,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_37_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "29",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class038']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 38,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_38_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "140",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class039']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 39,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_39_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class040']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 40,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_40_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "221",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class041']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 41,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_41_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "24",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class042']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 42,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_42_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "26",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class043']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 43,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_43_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class044']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 44,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_44_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "32",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class045']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 45,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_45_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "188",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class046']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 46,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_46_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class047']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 47,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_47_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "24",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class048']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 48,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_48_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "27",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class049']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 49,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_49_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008318_ProtCryo2D/classes2D.sqlite', 'Class050']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 50,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318.outputClasses_50_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3950 items, 120 x 120, 1.24 \u212b/px) \nOutput: SetOfClasses2D       (50 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8318_LegacyProtocol.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.1.6"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "8385",
        "object.label": "noFerritin classes",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "7548",
        "sqliteFile": "Runs/008318_ProtCryo2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "8318.",
        "output": [
            {
                "outputName": "8385.outputClasses2D",
                "outputType": "SetOfClasses2D",
                "outputSize": 38,
                "outputItems": [
                    {
                        "_size": "26",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class001']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_1_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "47",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class002']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_2_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "96",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class003']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_3_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "43",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class004']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_4_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class005']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_5_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "239",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class007']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_7_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "62",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class008']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_8_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "137",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class010']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_10_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "199",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class011']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_11_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "164",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class012']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_12_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class013']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_13_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "169",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class015']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_15_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "138",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class016']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 16,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_16_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class017']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_17_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class018']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_18_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "113",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class020']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_20_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "139",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class021']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 21,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_21_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "178",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class025']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 25,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_25_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "95",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class026']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_26_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "132",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class027']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_27_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "35",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class028']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_28_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "31",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class029']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 29,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_29_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "38",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class030']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 30,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_30_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "163",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class031']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 31,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_31_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "63",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class032']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 32,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_32_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "25",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class033']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 33,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_33_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class034']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 34,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_34_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "22",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class036']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 36,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_36_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "218",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class037']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 37,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_37_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "29",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class038']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 38,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_38_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "140",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class039']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 39,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_39_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class040']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 40,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_40_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "221",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class041']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 41,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_41_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "24",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class042']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 42,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_42_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "188",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class046']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 46,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_46_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class047']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 47,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_47_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "27",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class049']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 49,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_49_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008385_ProtUserSubSet/set.sqlite', 'Class050']",
                        "_representative": "Particle (120 x 120 x 50, 2.32 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 50,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385.outputClasses2D_50_cryosparc_P2_J6_020_class_averages_scaled.jpg"
                    }
                ]
            }
        ],
        "summary": "From input SetOfClasses2D of size 50 we selected 38 items to create output SetOfClasses2DInput: cryosparc2 - 2d classification \nOutput: SetOfClasses2D       (38 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8385_ProtUserSubSet.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "pwem",
        "pluginVersion": "3.0.6"
    },
    {
        "object.className": "XmippProtCenterParticles",
        "object.id": "8478",
        "object.label": "xmipp3 - center particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "inputMics": "6988.outputMicrographs",
        "inputClasses": "8385.outputClasses2D",
        "output": [
            {
                "outputName": "8478.outputClasses",
                "outputType": "SetOfClasses2D",
                "outputSize": 38,
                "outputItems": [
                    {
                        "_size": "26",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class001']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_1_centeredStack.jpg"
                    },
                    {
                        "_size": "47",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class002']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_2_centeredStack.jpg"
                    },
                    {
                        "_size": "96",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class003']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_3_centeredStack.jpg"
                    },
                    {
                        "_size": "43",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class004']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_4_centeredStack.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class005']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_5_centeredStack.jpg"
                    },
                    {
                        "_size": "239",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class006']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_6_centeredStack.jpg"
                    },
                    {
                        "_size": "62",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class007']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_7_centeredStack.jpg"
                    },
                    {
                        "_size": "137",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class008']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_8_centeredStack.jpg"
                    },
                    {
                        "_size": "199",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class009']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_9_centeredStack.jpg"
                    },
                    {
                        "_size": "164",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class010']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_10_centeredStack.jpg"
                    },
                    {
                        "_size": "33",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class011']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_11_centeredStack.jpg"
                    },
                    {
                        "_size": "169",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class012']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_12_centeredStack.jpg"
                    },
                    {
                        "_size": "138",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class013']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_13_centeredStack.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class014']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_14_centeredStack.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class015']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_15_centeredStack.jpg"
                    },
                    {
                        "_size": "113",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class016']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 16,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_16_centeredStack.jpg"
                    },
                    {
                        "_size": "139",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class017']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_17_centeredStack.jpg"
                    },
                    {
                        "_size": "178",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class018']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_18_centeredStack.jpg"
                    },
                    {
                        "_size": "95",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class019']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_19_centeredStack.jpg"
                    },
                    {
                        "_size": "132",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class020']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_20_centeredStack.jpg"
                    },
                    {
                        "_size": "35",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class021']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 21,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_21_centeredStack.jpg"
                    },
                    {
                        "_size": "31",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class022']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_22_centeredStack.jpg"
                    },
                    {
                        "_size": "38",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class023']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 23,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_23_centeredStack.jpg"
                    },
                    {
                        "_size": "163",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class024']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_24_centeredStack.jpg"
                    },
                    {
                        "_size": "63",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class025']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 25,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_25_centeredStack.jpg"
                    },
                    {
                        "_size": "25",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class026']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_26_centeredStack.jpg"
                    },
                    {
                        "_size": "37",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class027']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_27_centeredStack.jpg"
                    },
                    {
                        "_size": "22",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class028']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_28_centeredStack.jpg"
                    },
                    {
                        "_size": "218",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class029']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 29,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_29_centeredStack.jpg"
                    },
                    {
                        "_size": "29",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class030']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 30,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_30_centeredStack.jpg"
                    },
                    {
                        "_size": "140",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class031']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 31,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_31_centeredStack.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class032']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 32,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_32_centeredStack.jpg"
                    },
                    {
                        "_size": "221",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class033']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 33,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_33_centeredStack.jpg"
                    },
                    {
                        "_size": "24",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class034']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 34,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_34_centeredStack.jpg"
                    },
                    {
                        "_size": "188",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class035']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 35,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_35_centeredStack.jpg"
                    },
                    {
                        "_size": "34",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class036']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 36,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_36_centeredStack.jpg"
                    },
                    {
                        "_size": "27",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class037']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 37,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_37_centeredStack.jpg"
                    },
                    {
                        "_size": "41",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/008478_XmippProtCenterParticles/classes2D.sqlite', 'Class038']",
                        "_representative": "Particle (120 x 120, 99999.00 \u212b/px)",
                        "_samplingRate": "1.2375",
                        "_hasCtf": "True",
                        "_alignment": "2D",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "120 x 120",
                        "item_id": 38,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputClasses_38_centeredStack.jpg"
                    }
                ]
            },
            {
                "outputName": "8478.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 3491,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.535268   -0.84468229 -0.         -0.519895  ]\n [ 0.84468229 -0.535268    0.         -1.997722  ]\n [-0.         -0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155432",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_1_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.30536728  0.95223465 -0.         -3.360318  ]\n [-0.95223465  0.30536728  0.         -3.666755  ]\n [ 0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155201",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_2_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.78859732  0.61490997 -0.          1.044207  ]\n [-0.61490997 -0.78859732  0.         -1.618913  ]\n [-0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.15543",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_3_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.78492342  0.61959279 -0.          0.016423  ]\n [-0.61959279 -0.78492342  0.          2.988408  ]\n [-0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155745",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_4_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.91518534  0.40303325 -0.         -1.626231  ]\n [-0.40303325  0.91518534  0.         -0.709754  ]\n [ 0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.158503",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_5_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.87154816  0.49030991 -0.          0.362695  ]\n [-0.49030991  0.87154816  0.         -2.866636  ]\n [ 0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155461",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_6_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.2588738  -0.96591115 -0.          0.928028  ]\n [ 0.96591115  0.2588738   0.         -1.332711  ]\n [ 0.         -0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.161446",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_7_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.50557404 -0.86278322 -0.          0.162549  ]\n [ 0.86278322  0.50557404  0.         -0.030935  ]\n [ 0.         -0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155704",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_8_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.41985042  0.90759332 -0.         -3.411409  ]\n [-0.90759332 -0.41985042  0.         -0.105502  ]\n [-0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.160934",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_9_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.9222686   0.38654965 -0.         -0.161495  ]\n [-0.38654965  0.9222686   0.         -2.564775  ]\n [ 0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155053",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_10_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.3841956   0.92325172 -0.          1.992015  ]\n [-0.92325172 -0.3841956   0.         -1.083411  ]\n [-0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155232",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_12_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.46694309 -0.88428737 -0.         -0.602506  ]\n [ 0.88428737  0.46694309  0.          2.335012  ]\n [ 0.         -0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155442",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_13_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.62352288 -0.7818051  -0.         -1.92088   ]\n [ 0.7818051  -0.62352288  0.         -0.67154   ]\n [-0.         -0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155755",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_14_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.82985403  0.55798055 -0.          0.927032  ]\n [-0.55798055 -0.82985403  0.         -3.711365  ]\n [-0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155584",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_15_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "16",
                        "_filename": "Runs/007502_XmippProtExtractParticles/extra/190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "1.2375",
                        "_ctfModel": "defU=8968.91, defV=8641.29, ast=19.74, psh=None, res=2.80, fit=0.17",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.99365496  0.11247146 -0.         -1.36997   ]\n [-0.11247146  0.99365496  0.         -0.881728  ]\n [ 0.          0.          1.          0.        ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "1",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.155715",
                        "_xmipp_scoreByGiniCoeff": "0.688623",
                        "item_id": 16,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputParticles_16_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "8478.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 3491,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Realignment of 38 classes.Input: SetOfClasses2D       (38 items) \nInput: SetOfMicrographs (28 items, 3710 x 3838, 0.49 \u212b/px) \nOutput: SetOfClasses2D       (38 items)SetOfParticles (3491 items, 120 x 120, 1.24 \u212b/px)SetOfCoordinates (3491 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8478_XmippProtCenterParticles.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtPickingRemoveDuplicates",
        "object.id": "8544",
        "object.label": "xmipp3 - remove duplicates",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "consensusRadius": 100,
        "inputCoordinates": "8478.outputCoordinates",
        "output": [
            {
                "outputName": "8544.outputCoordinates",
                "outputType": "SetOfCoordinates",
                "outputSize": 3356,
                "outputItems": [
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8544.outputCoordinates_190117_02_00001_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8544.outputCoordinates_190117_02_00002_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8544.outputCoordinates_190117_02_00003_UnderDefocus0.7um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Radius = 100Input: SetOfCoordinates (3491 items,  300 x 300) \nOutput: SetOfCoordinates (3356 items,  300 x 300)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8544_XmippProtPickingRemoveDuplicates.log",
        "label": [
            "Particles"
        ],
        "labelColor": [
            "#4fc3f7"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "8661",
        "object.label": "xmipp3 - crop/resize volumes (2)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 1.24,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 120,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "7846.outputVolumes.1",
        "output": [
            {
                "outputName": "8661.outputVol",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/008661_XmippProtCropResizeVolumes/extra/output_volume.vol",
                        "_samplingRate": "1.24",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8703,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8661.outputVol_output_volume"
                    }
                ]
            }
        ],
        "summary": "Output volume(s) have a different sampling rate (pixel size): *1.240* \u212b/pxResizing method: *Sampling Rate*The volume(s) were windowed.New size: *120* pxInput: Volume (64 x 64 x 64, 2.32 \u212b/px) \nOutput: Volume (120 x 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8661_XmippProtCropResizeVolumes.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtAlignVolume",
        "object.id": "8709",
        "object.label": "xmipp3 - align volume",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "8163.outputVolume",
            "8661.outputVol",
            "7983.outputVolume",
            "7920.outputVolumes.1",
            "7920.outputVolumes.2",
            "7920.outputVolumes.3",
            "7920.outputVolumes.4",
            "7920.outputVolumes.5",
            "7920.outputVolumes.6",
            "7920.outputVolumes.7",
            "7920.outputVolumes.8",
            "7920.outputVolumes.9",
            "7920.outputVolumes.10"
        ],
        "applyMask": false,
        "maskType": 0,
        "maskRadius": -1,
        "alignmentAlgorithm": 3,
        "minRotationalAngle": 0.0,
        "maxRotationalAngle": 360.0,
        "stepRotationalAngle": 5.0,
        "minTiltAngle": 0.0,
        "maxTiltAngle": 180.0,
        "stepTiltAngle": 5.0,
        "minInplaneAngle": 0.0,
        "maxInplaneAngle": 360.0,
        "stepInplaneAngle": 5.0,
        "minimumShiftX": 0.0,
        "maximumShiftX": 0.0,
        "stepShiftX": 1.0,
        "minimumShiftY": 0.0,
        "maximumShiftY": 0.0,
        "stepShiftY": 1.0,
        "minimumShiftZ": 0.0,
        "maximumShiftZ": 0.0,
        "stepShiftZ": 1.0,
        "minimumScale": 1.0,
        "maximumScale": 1.0,
        "stepScale": 0.005,
        "initialRotAngle": 0.0,
        "initialTiltAngle": 0.0,
        "initialInplaneAngle": 0.0,
        "initialShiftX": 0.0,
        "initialShiftY": 0.0,
        "initialShiftZ": 0.0,
        "optimizeScale": false,
        "initialScale": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "inputReference": "8163.outputVolume",
        "output": [
            {
                "outputName": "8709.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 13,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol01.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 1.00000e+00 -1.19906e-06  6.00716e-09 -1.03452e-03]\n [ 1.19897e-06  9.99970e-01  7.77905e-03  2.57554e-03]\n [-1.53345e-08 -7.77905e-03  9.99970e-01 -3.21816e-03]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol01"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol02.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99846e-01 -4.65655e-07 -1.75753e-02 -3.45115e-01]\n [ 1.75722e-02 -1.86957e-02 -9.99671e-01 -3.55968e-01]\n [-3.28117e-04 -9.99825e-01  1.86928e-02 -3.32785e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol02"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol03.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99932e-01  8.23714e-03  8.23738e-03 -3.38301e-01]\n [ 8.23714e-03  9.99966e-01 -3.30948e-05 -3.29066e-01]\n [-8.23737e-03  3.47600e-05 -9.99966e-01 -3.39275e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol03"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol04.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 9.99999e-01  8.92277e-04  8.92301e-04 -3.38677e-01]\n [ 8.92301e-04 -1.00000e+00 -2.66583e-05 -3.48667e-01]\n [ 8.92277e-04  2.74545e-05 -1.00000e+00 -3.34636e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol04"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol05.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 9.99999e-01  8.54834e-04  8.54854e-04 -3.38493e-01]\n [ 8.54855e-04 -1.00000e+00 -2.39289e-05 -3.48453e-01]\n [ 8.54834e-04  2.46596e-05 -1.00000e+00 -3.34344e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol05"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol06.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 9.99998e-01  1.23030e-03  1.23027e-03 -3.39923e-01]\n [ 1.23027e-03 -9.99999e-01  2.07819e-05 -3.48947e-01]\n [ 1.23030e-03 -1.92683e-05 -9.99999e-01 -3.35200e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol06"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol07.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 1.00000e+00  1.13730e-04 -1.13721e-04 -3.38515e-01]\n [ 1.13725e-04 -1.00000e+00 -4.53360e-05 -3.48648e-01]\n [-1.13726e-04  4.53231e-05 -1.00000e+00 -3.34706e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol07"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol08.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[ 1.00000e+00  1.44742e-04 -1.44742e-04 -3.39964e-01]\n [ 1.44744e-04 -1.00000e+00  1.13816e-05 -3.48941e-01]\n [-1.44740e-04 -1.14026e-05 -1.00000e+00 -3.35220e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol08"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol09.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99873e-01  1.59309e-02  4.57811e-04 -3.41709e-01]\n [ 1.59309e-02  9.99873e-01 -2.17292e-05 -3.48845e-01]\n [-4.58099e-04 -1.44331e-05 -1.00000e+00 -3.35649e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol09"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol10.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99838e-01  1.27328e-02  1.27334e-02 -3.42291e-01]\n [-1.27332e-02  9.31407e-05 -9.99919e-01 -3.48281e-01]\n [-1.27330e-02 -9.99919e-01  6.90041e-05 -3.33607e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol10"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol11.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99891e-01  1.04267e-02  1.04266e-02 -3.41442e-01]\n [ 1.04263e-02  9.99946e-01 -9.33490e-05 -3.48923e-01]\n [-1.04270e-02  1.53717e-05 -9.99946e-01 -3.35976e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol11"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol12.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99843e-01 -1.25211e-02  1.25236e-02 -3.40964e-01]\n [ 1.25208e-02  3.04259e-04  9.99922e-01 -3.47859e-01]\n [-1.25239e-02  9.99922e-01 -1.47438e-04 -3.35953e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol12"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008709_XmippProtAlignVolume/extra/vol13.mrc",
                        "_samplingRate": "1.2375",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_transform": "[[-9.99884e-01 -1.52310e-02  1.16481e-07 -3.42076e-01]\n [-5.47625e-07  4.35980e-05  1.00000e+00 -3.49454e-01]\n [-1.52310e-02  9.99884e-01 -4.36013e-05 -3.35831e-01]\n [ 0.00000e+00  0.00000e+00  0.00000e+00  1.00000e+00]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709.outputVolumes_vol13"
                    }
                ]
            }
        ],
        "summary": "Volumes to align: *13* Alignment method: fast fourierInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nOutput: SetOfVolumes (13 items, 120 x 120 x 120, 1.24 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8709_XmippProtAlignVolume.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtReconstructSwarm",
        "object.id": "8819",
        "object.label": "xmipp3 - swarm consensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "particleRadius": -1,
        "symmetryGroup": "o",
        "numberOfIterations": 15,
        "targetResolution": 12.0,
        "minAngle": 10.0,
        "NimgTrain": 500,
        "NimgTest": 100,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 12,
        "inputParticles": "8478.outputParticles",
        "inputVolumes": "8709.outputVolumes",
        "output": [
            {
                "outputName": "8819.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volumeAvg.vol",
                        "_samplingRate": "1.2375",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8862,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolume_volumeAvg"
                    }
                ]
            },
            {
                "outputName": "8819.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 13,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume000_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume000_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume001_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume001_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume002_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume002_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume003_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume003_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume004_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume004_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume005_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume005_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume006_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume006_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume007_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume007_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume008_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume008_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume009_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume009_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume010_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume010_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume011_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume011_best"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/008819_XmippProtReconstructSwarm/extra/volume012_best.vol",
                        "_samplingRate": "3.7125",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819.outputVolumes_volume012_best"
                    }
                ]
            }
        ],
        "summary": "Symmetry: oNumber of iterations: 15Input: SetOfParticles (3491 items, 120 x 120, 1.24 \u212b/px) \nInput: SetOfVolumes (13 items, 120 x 120 x 120, 1.24 \u212b/px) \nOutput: Volume (120 x 120 x 120, 1.24 \u212b/px)SetOfVolumes (13 items, 40 x 40 x 40, 3.71 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8819_XmippProtReconstructSwarm.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "8886",
        "object.label": "xmipp3 - crop/resize volumes 2/3",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 0.74,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 250,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "8819.outputVolume",
        "output": [
            {
                "outputName": "8886.outputVol",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/008886_XmippProtCropResizeVolumes/extra/output_volume.vol",
                        "_samplingRate": "0.74",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 8934,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8886.outputVol_output_volume"
                    }
                ]
            }
        ],
        "summary": "Output volume(s) have a different sampling rate (pixel size): *0.740* \u212b/pxResizing method: *Sampling Rate*The volume(s) were windowed.New size: *250* pxInput: Volume (120 x 120 x 120, 1.24 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8886_XmippProtCropResizeVolumes.log",
        "label": [
            "Initial volume"
        ],
        "labelColor": [
            "#81c784"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "8940",
        "object.label": "cryosparc2 - 3D homogeneous refinement",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "8046.outputParticles",
        "referenceVolume": "8886.outputVol",
        "output": [
            {
                "outputName": "8940.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/008940_ProtCryoSparcRefine3D/extra/cryosparc_P2_J11_008_volume_map.mrc",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/008940_ProtCryoSparcRefine3D/extra/cryosparc_P2_J11_008_volume_map_half_A.mrc', 'Runs/008940_ProtCryoSparcRefine3D/extra/cryosparc_P2_J11_008_volume_map_half_B.mrc']",
                        "item_id": 9017,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputVolume_cryosparc_P2_J11_008_volume_map"
                    }
                ]
            },
            {
                "outputName": "8940.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 3215,
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.84912516 -0.51466127  0.11878655 -0.38475655]\n [-0.51662967 -0.85605991 -0.01597509  6.21707682]\n [ 0.10991017 -0.0478038  -0.99279129 -0.14607529]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256707",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_1_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ -0.24768849   0.85778841   0.45038812  -3.5022939 ]\n [  0.27330734  -0.38412985   0.88189986  -0.02379561]\n [  0.92949099   0.34153082  -0.13929533 -11.47473448]\n [  0.           0.           0.           1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.234359",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_2_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.31444012 -0.04134424  0.94837654  0.40354289]\n [-0.87956804  0.38846467 -0.27469121 -1.84467959]\n [-0.35705389 -0.92053563 -0.15851395  5.6110386 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.260546",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_3_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.9626284   0.22039572 -0.15739217  0.14041168]\n [ 0.25448132  0.93493757 -0.24724682 -0.92944941]\n [ 0.09265971 -0.27806018 -0.95608405  0.2172442 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "5",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.95818733 -0.27645782 -0.07381132  4.52425231]\n [-0.28537076 -0.90434355 -0.31737404  4.78077441]\n [ 0.02098974  0.32516738 -0.94542351 -1.95810104]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266866",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 5,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_5_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80064802  0.57705772 -0.16114321 -0.80725015]\n [ 0.51518356 -0.800395   -0.30651875  0.16711622]\n [-0.30585723  0.1623953  -0.93812532  0.08405979]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "7",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.08336577  0.51102532  0.85551345 -0.7404115 ]\n [ 0.74524769 -0.53795954  0.39396119 -1.09543208]\n [ 0.66155577  0.6704123  -0.33599303 -3.16967799]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.25964",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 7,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_7_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.94236287 -0.16152444 -0.29302232 -2.73137306]\n [-0.22556893 -0.34013007  0.91292398 -0.73622827]\n [-0.24712524  0.92640239  0.28409105 -0.45137932]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.89684763  0.44188726 -0.01999954 -1.20562998]\n [ 0.44104251  0.88984334 -0.11687741 -5.8510668 ]\n [-0.03385018 -0.11364187 -0.99294496  0.71299982]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.5277694  -0.80445948 -0.27258834 -3.91019471]\n [ 0.77523942 -0.58735411  0.23241987 -8.97514645]\n [-0.34707825 -0.08865713  0.93363623  1.09264064]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.25882527  0.92761379 -0.26933649 -3.39634275]\n [ 0.89813218 -0.12849595  0.42053226 -9.5625754 ]\n [ 0.35548288 -0.35074414 -0.86637779 -3.58574803]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "12",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.97946887  0.1904555  -0.06608655  4.27348406]\n [ 0.14591193  0.89595343  0.41949632 -1.25043244]\n [ 0.13910585  0.40124077 -0.90534822 -0.89133838]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.254098",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 12,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_12_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "13",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.53116487  0.83439252 -0.1471496   6.37188274]\n [ 0.75090424 -0.54404142 -0.37438182  3.68891433]\n [-0.39243687  0.08836321 -0.91552458 -2.53262722]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.234176",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 13,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_13_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "14",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-5.40595665e-01  6.23436583e-02  8.38969365e-01 -2.06566383e+00]\n [-8.32480255e-01  1.04240298e-01 -5.44160440e-01 -3.11632038e+00]\n [-1.21379369e-01 -9.92596206e-01 -4.45198860e-03 -8.36713777e+00]\n [ 0.00000000e+00  0.00000000e+00  0.00000000e+00  1.00000000e+00]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266425",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 14,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_14_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.93255309 -0.27682126  0.23176437 -2.16005711]\n [-0.12688271  0.85229153  0.5074445  -0.25913285]\n [-0.33800223  0.44381205 -0.82993093 -0.7616535 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "8940.outputFSC",
                "outputType": "FSC",
                "outputItems": [
                    {
                        "_x": "[0.0026936026936026937, 0.00808080808080808, 0.013468013468013467, 0.018855218855218854, 0.024242424242424242, 0.02962962962962963, 0.035016835016835016, 0.04040404040404041, 0.04579124579124579, 0.05117845117845118, 0.05656565656565657, 0.061952861952861954, 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0.6599326599326599]",
                        "_y": "[1.0, 1.0, 0.999999, 0.999995, 0.99999, 0.999901, 0.999833, 0.999534, 0.99948, 0.998833, 0.999245, 0.999219, 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0.001602]",
                        "item_id": 9043
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3215 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)SetOfParticles (3215 items, 250 x 250, 0.74 \u212b/px)FSC",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/8940_LegacyProtocol.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.1.6"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "9046",
        "object.label": "relion - 3D classification 1",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "8940.outputParticles",
        "referenceVolume": "8940.outputVolume",
        "output": [
            {
                "outputName": "9046.outputClasses",
                "outputType": "SetOfClasses3D",
                "outputSize": 2,
                "outputItems": [
                    {
                        "_size": "787",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009046_ProtRelionClassify3D/classes3D.sqlite', 'Class001']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "0.7425",
                        "_hasCtf": "True",
                        "_alignment": "Projection",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "_rlnClassDistribution": "0.259748",
                        "_rlnAccuracyRotations": "3.64",
                        "_rlnAccuracyTranslationsAngst": "1.623847",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9046.outputClasses_relion_it025_class001"
                    },
                    {
                        "_size": "2428",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009046_ProtRelionClassify3D/classes3D.sqlite', 'Class002']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "0.7425",
                        "_hasCtf": "True",
                        "_alignment": "Projection",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "_rlnClassDistribution": "0.740252",
                        "_rlnAccuracyRotations": "2.298",
                        "_rlnAccuracyTranslationsAngst": "1.141965",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9046.outputClasses_relion_it025_class002"
                    }
                ]
            },
            {
                "outputName": "9046.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 2,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009046_ProtRelionClassify3D/extra/relion_it025_class001.mrc:mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9046.outputVolumes_relion_it025_class001"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/009046_ProtRelionClassify3D/extra/relion_it025_class002.mrc:mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9046.outputVolumes_relion_it025_class002"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3215 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: SetOfClasses3D       (2 items)SetOfVolumes (2 items, 250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9046_LegacyProtocol.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "9154",
        "object.label": "relion - 3D classification 2",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputParticles": "8940.outputParticles",
        "referenceVolume": "8940.outputVolume",
        "output": [
            {
                "outputName": "9154.outputClasses",
                "outputType": "SetOfClasses3D",
                "outputSize": 2,
                "outputItems": [
                    {
                        "_size": "755",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009154_ProtRelionClassify3D/classes3D.sqlite', 'Class001']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "0.7425",
                        "_hasCtf": "True",
                        "_alignment": "Projection",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "_rlnClassDistribution": "0.248687",
                        "_rlnAccuracyRotations": "3.485",
                        "_rlnAccuracyTranslationsAngst": "1.63053",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9154.outputClasses_relion_it025_class001"
                    },
                    {
                        "_size": "2460",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009154_ProtRelionClassify3D/classes3D.sqlite', 'Class002']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "0.7425",
                        "_hasCtf": "True",
                        "_alignment": "Projection",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "_rlnClassDistribution": "0.751313",
                        "_rlnAccuracyRotations": "2.259",
                        "_rlnAccuracyTranslationsAngst": "1.12266",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9154.outputClasses_relion_it025_class002"
                    }
                ]
            },
            {
                "outputName": "9154.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 2,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009154_ProtRelionClassify3D/extra/relion_it025_class001.mrc:mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9154.outputVolumes_relion_it025_class001"
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/009154_ProtRelionClassify3D/extra/relion_it025_class002.mrc:mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9154.outputVolumes_relion_it025_class002"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (3215 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: SetOfClasses3D       (2 items)SetOfVolumes (2 items, 250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9154_LegacyProtocol.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "XmippProtConsensusClasses3D",
        "object.id": "9262",
        "object.label": "xmipp3 - consensus classes 3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMultiClasses": [
            "9154.outputClasses",
            "9046.outputClasses"
        ],
        "output": [
            {
                "outputName": "9262.outputClasses",
                "outputType": "SetOfClasses3D",
                "outputSize": 4,
                "outputItems": [
                    {
                        "_size": "271",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009262_XmippProtConsensusClasses3D/classes3D.sqlite', 'Class001']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "None",
                        "_hasCtf": "False",
                        "_alignment": "None",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9262.outputClasses_relion_it025_class001"
                    },
                    {
                        "_size": "484",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009262_XmippProtConsensusClasses3D/classes3D.sqlite', 'Class002']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "None",
                        "_hasCtf": "False",
                        "_alignment": "None",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9262.outputClasses_relion_it025_class001"
                    },
                    {
                        "_size": "516",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009262_XmippProtConsensusClasses3D/classes3D.sqlite', 'Class003']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "None",
                        "_hasCtf": "False",
                        "_alignment": "None",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9262.outputClasses_relion_it025_class001"
                    },
                    {
                        "_size": "1944",
                        "_streamState": "2",
                        "_mapperPath": "['Runs/009262_XmippProtConsensusClasses3D/classes3D.sqlite', 'Class004']",
                        "_representative": "Volume (250 x 250 x 250, 99999.00 \u212b/px)",
                        "_samplingRate": "None",
                        "_hasCtf": "False",
                        "_alignment": "None",
                        "_isPhaseFlipped": "False",
                        "_isAmplitudeCorrected": "False",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_firstDim": "250 x 250",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9262.outputClasses_relion_it025_class002"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfClasses3D       (2 items) \nInput: SetOfClasses3D       (2 items) \nOutput: SetOfClasses3D       (4 items)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9262_XmippProtConsensusClasses3D.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "9302",
        "object.label": "goodParticles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/009262_XmippProtConsensusClasses3D/classes3D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "9262.outputClasses",
        "output": [
            {
                "outputName": "9302.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1944,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.9626284   0.22039572 -0.15739217  0.14041168]\n [ 0.25448132  0.93493757 -0.24724682 -0.92944941]\n [ 0.09265971 -0.27806018 -0.95608405  0.2172442 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80064802  0.57705772 -0.16114321 -0.80725015]\n [ 0.51518356 -0.800395   -0.30651875  0.16711622]\n [-0.30585723  0.1623953  -0.93812532  0.08405979]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.94236287 -0.16152444 -0.29302232 -2.73137306]\n [-0.22556893 -0.34013007  0.91292398 -0.73622827]\n [-0.24712524  0.92640239  0.28409105 -0.45137932]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.89684763  0.44188726 -0.01999954 -1.20562998]\n [ 0.44104251  0.88984334 -0.11687741 -5.8510668 ]\n [-0.03385018 -0.11364187 -0.99294496  0.71299982]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.5277694  -0.80445948 -0.27258834 -3.91019471]\n [ 0.77523942 -0.58735411  0.23241987 -8.97514645]\n [-0.34707825 -0.08865713  0.93363623  1.09264064]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.25882527  0.92761379 -0.26933649 -3.39634275]\n [ 0.89813218 -0.12849595  0.42053226 -9.5625754 ]\n [ 0.35548288 -0.35074414 -0.86637779 -3.58574803]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.93255309 -0.27682126  0.23176437 -2.16005711]\n [-0.12688271  0.85229153  0.5074445  -0.25913285]\n [-0.33800223  0.44381205 -0.82993093 -0.7616535 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76689132  0.6267884   0.13789129  3.95803367]\n [ 0.51954497  0.73246632 -0.4399615   0.25649382]\n [-0.37676349 -0.26576193 -0.88736682  0.48788274]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.63401018  0.75135363 -0.1830268  -9.16034416]\n [ 0.7692514  -0.58849279  0.24885442 -3.55515554]\n [ 0.07926772 -0.29856986 -0.95109025  0.83259428]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.78423921  0.61697969  0.06561191  1.1747058 ]\n [ 0.54257976  0.63066398  0.55486047 -1.26713155]\n [ 0.30095858  0.47074303 -0.82935212 -0.75481392]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.95694883  0.17194922 -0.23384269 -5.23886473]\n [ 0.18127466 -0.9832524   0.01882077 -2.06377544]\n [-0.22669017 -0.06040027 -0.97209227  1.22028373]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.06399283  0.70409464 -0.70721684 -2.87534923]\n [ 0.64748258 -0.56855439 -0.5074566   0.65587746]\n [-0.75938872 -0.425437   -0.49227242  3.45472541]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.19068663 -0.23965746 -0.9519469   2.16209704]\n [-0.47730994 -0.8247525   0.30324666  6.72074383]\n [-0.85779591  0.51219881  0.04287839  0.47013181]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[  0.92951855   0.32548016  -0.17337222 -10.06969872]\n [  0.30695288  -0.94342251  -0.12543482  -8.21036187]\n [ -0.20438979   0.06337689  -0.9768358    2.84149209]\n [  0.           0.           0.           1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.61998976  0.76629376 -0.16854249 -1.78859633]\n [ 0.74811542  0.64210339  0.16741131  4.7898876 ]\n [ 0.23650795 -0.02229593 -0.97137371  1.13585104]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "From input SetOfClasses3D of size 4 was selected 1 item to create output SetOfParticles of size 1944Input: SetOfClasses3D       (4 items) \nOutput: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9302_ProtUserSubSet.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "pwem",
        "pluginVersion": "3.0.6"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "9355",
        "object.label": "cryosparc2 - 3D homogeneous refinement",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "referenceVolume": "8940.outputVolume",
        "inputParticles": "9302.outputParticles",
        "output": [
            {
                "outputName": "9355.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009355_ProtCryoSparcRefine3D/extra/cryosparc_P2_J14_006_volume_map.mrc",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/009355_ProtCryoSparcRefine3D/extra/cryosparc_P2_J14_006_volume_map_half_A.mrc', 'Runs/009355_ProtCryoSparcRefine3D/extra/cryosparc_P2_J14_006_volume_map_half_B.mrc']",
                        "item_id": 9432,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputVolume_cryosparc_P2_J14_006_volume_map"
                    }
                ]
            },
            {
                "outputName": "9355.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1944,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96072673  0.22287034 -0.16532685  0.1549318 ]\n [ 0.25893134  0.93423858 -0.24526075 -0.85739754]\n [ 0.09979338 -0.27843686 -0.95525609  0.19332154]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80064802  0.57705772 -0.16114321 -0.91488203]\n [ 0.51518356 -0.800395   -0.30651875  0.18939808]\n [-0.30585723  0.1623953  -0.93812532  0.09526761]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.94086394 -0.1629629  -0.29701537 -2.78826642]\n [-0.22888782 -0.34059063  0.91192565 -0.73709134]\n [-0.2497707   0.92598117  0.28314922 -0.55089499]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.89684763  0.44188726 -0.01999954 -1.17110798]\n [ 0.44104251  0.88984334 -0.11687741 -5.78154868]\n [-0.03385018 -0.11364187 -0.99294496  0.70412166]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.77589516 -0.58572035  0.23434669 -8.82773347]\n [-0.52718861 -0.80601901 -0.26908273 -3.73732331]\n [ 0.34649511  0.08523508 -0.93417135 -1.13801492]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.25369753  0.92886985 -0.26988582 -3.24970633]\n [ 0.8994327  -0.12387615  0.41913663 -9.51902234]\n [ 0.35589097 -0.34907806 -0.86688299 -3.59070525]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.93255309 -0.27682126  0.23176437 -2.25453883]\n [-0.12688271  0.85229153  0.5074445  -0.2024593 ]\n [-0.33800223  0.44381205 -0.82993093 -0.75338633]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76689132  0.6267884   0.13789129  3.96897907]\n [ 0.51954497  0.73246632 -0.4399615   0.15868169]\n [-0.37676349 -0.26576193 -0.88736682  0.53807939]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.08075661  0.29952552  0.95066442 -0.87159012]\n [ 0.77122687 -0.58542871  0.24996466 -3.4958676 ]\n [ 0.63141704  0.75336424 -0.18372489 -9.26620799]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.53948169 -0.63198738 -0.55637349  1.45950839]\n [-0.30205613 -0.471534    0.82850334  0.9045232 ]\n [-0.78595267  0.6150184   0.0634883   0.9865011 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.95754634  0.16700334 -0.23497847 -5.24746545]\n [ 0.17811386 -0.98364688  0.0267257  -2.04628852]\n [-0.22667256 -0.06744402 -0.97163309  1.21275504]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75756762  0.42608748  0.49451063 -3.42700506]\n [-0.06353233 -0.70584628  0.70551022  2.93120601]\n [ 0.64965756 -0.56588911 -0.50765596  0.73535111]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.18952185 -0.24546849 -0.950698    2.15287818]\n [-0.47833755 -0.82249581  0.30772362  6.58322876]\n [-0.85748158  0.5130749   0.03846413  0.54393591]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.92744071 -0.33094626  0.17415021 10.07010839]\n [-0.31360494  0.94195013  0.11992456  8.13922873]\n [-0.2037294   0.05660856 -0.97738928  2.7929557 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.61998976  0.76629376 -0.16854249 -1.74015901]\n [ 0.74811542  0.64210339  0.16741131  4.73144033]\n [ 0.23650795 -0.02229593 -0.97137371  1.11737362]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "9355.outputFSC",
                "outputType": "FSC",
                "outputItems": [
                    {
                        "_x": "[0.0026936026936026937, 0.00808080808080808, 0.013468013468013467, 0.018855218855218854, 0.024242424242424242, 0.02962962962962963, 0.035016835016835016, 0.04040404040404041, 0.04579124579124579, 0.05117845117845118, 0.05656565656565657, 0.061952861952861954, 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0.6599326599326599]",
                        "_y": "[1.0, 1.0, 1.0, 0.999995, 0.999958, 0.999944, 0.999893, 0.999278, 0.999427, 0.997344, 0.997762, 0.997455, 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0.006491]",
                        "item_id": 9458
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px)FSC",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9355_LegacyProtocol.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "orphan",
        "pluginVersion": "3.1.6"
    },
    {
        "object.className": "LegacyProtocol",
        "object.id": "9461",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "referenceVolume": "8940.outputVolume",
        "inputParticles": "9302.outputParticles",
        "output": [
            {
                "outputName": "9461.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009461_ProtRelionRefine3D/extra/relion_class001.mrc",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/009461_ProtRelionRefine3D/extra/relion_half1_class001_unfil.mrc:mrc', 'Runs/009461_ProtRelionRefine3D/extra/relion_half2_class001_unfil.mrc:mrc']",
                        "item_id": 9538,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputVolume_relion_class001"
                    }
                ]
            },
            {
                "outputName": "9461.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1944,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96218756  0.21740911 -0.16409868  0.18806733]\n [-0.25350379 -0.93514444  0.24746861  0.81590146]\n [-0.09965404  0.27971085  0.95489838 -0.17912733]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.79594017  0.58213922 -0.16611194 -1.06415569]\n [-0.51587682  0.79582032  0.31708221 -0.21617294]\n [ 0.31678125 -0.16668517  0.93373749 -0.11590449]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94491728  0.15829743  0.28648429  3.08606937]\n [-0.24209552  0.92706303  0.28625843 -0.57024773]\n [-0.22027502 -0.33984711  0.91432098 -0.78842352]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.90792074  0.41782639  0.03318192 -0.50981699]\n [-0.41458567 -0.9068738   0.07548931  3.9078218 ]\n [ 0.06163324  0.05478156  0.99659436 -0.27903233]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78414797 -0.5790823   0.22310457 -8.97540316]\n [ 0.51796123  0.80874269  0.27866005  3.87275651]\n [-0.3418013  -0.10295119  0.93411612  0.98838994]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.2568632  -0.92786587  0.27034463  3.48348222]\n [ 0.89625294 -0.12403618  0.42584704 -9.55883671]\n [-0.36159641  0.3516816   0.86346284  3.62362038]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.93405892  0.27502643 -0.22780341  2.14355319]\n [-0.12735959  0.85248765  0.5069954  -0.08953158]\n [ 0.33363673 -0.44455063  0.83130095  0.64200675]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.7693032   0.62559983  0.12960496  3.52637813]\n [-0.51833955 -0.72976691  0.44582999 -0.18883621]\n [ 0.37349257  0.27579906  0.88568515 -0.42097041]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.6303571  -0.75293312  0.18905461  9.31925591]\n [ 0.77164224 -0.58105417  0.25873598 -3.33837309]\n [-0.08495992  0.30897859  0.94726662 -0.94808694]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78856762 -0.61182168 -0.06193006 -0.9250512 ]\n [ 0.53773231  0.63718818  0.55211882 -1.44500828]\n [-0.29833716 -0.46868482  0.83146225  0.89063309]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.18816311  0.98181135 -0.02532028  2.29158808]\n [-0.9561652  -0.17723657  0.23309934  5.30156682]\n [ 0.2243719   0.06807106  0.97212323 -1.21154195]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75751313  0.42320809  0.49706012 -3.39168663]\n [-0.64889735  0.57146996  0.5023488  -0.61785272]\n [-0.07145685 -0.70307681  0.70751461  2.82149617]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85497991  0.51678712  0.04405035  0.24215728]\n [-0.48099521 -0.82179991  0.30543168  6.55800621]\n [ 0.19404374  0.23994994  0.95119454 -2.11701172]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.31321989  0.94248075  0.11671901  7.79790485]\n [-0.9280199  -0.3298551   0.17313197  9.90357   ]\n [ 0.20167391 -0.05408918  0.97795807 -2.68394771]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74937051 -0.64091537 -0.166347   -4.96228928]\n [ 0.61940181 -0.76731332  0.16604718  1.98734963]\n [-0.23406246  0.02139523  0.97198612 -1.18875745]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "9461.outputFSC",
                "outputType": "FSC",
                "outputItems": [
                    {
                        "_x": "[0.0, 0.005387, 0.010774, 0.016162, 0.021549, 0.026936, 0.032323, 0.03771, 0.043098, 0.048485, 0.053872, 0.059259, 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0.673401]",
                        "_y": "[1.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 0.0, 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0.0]",
                        "item_id": 9564
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px)FSC",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9461_LegacyProtocol.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "orphan"
    },
    {
        "object.className": "XmippProtCompareAngles",
        "object.id": "9567",
        "object.label": "xmipp3 - compare angles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "o",
        "inputParticles2": "9355.outputParticles",
        "inputParticles1": "9461.outputParticles",
        "output": [
            {
                "outputName": "9567.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1944,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96218756  0.21740911 -0.16409868  0.18806733]\n [-0.25350379 -0.93514444  0.24746861  0.81590146]\n [-0.09965404  0.27971085  0.95489838 -0.17912733]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.79594017  0.58213922 -0.16611194 -1.06415569]\n [-0.51587682  0.79582032  0.31708221 -0.21617294]\n [ 0.31678125 -0.16668517  0.93373749 -0.11590449]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94491728  0.15829743  0.28648429  3.08606937]\n [-0.24209552  0.92706303  0.28625843 -0.57024773]\n [-0.22027502 -0.33984711  0.91432098 -0.78842352]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "9",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.90792074  0.41782639  0.03318192 -0.50981699]\n [-0.41458567 -0.9068738   0.07548931  3.9078218 ]\n [ 0.06163324  0.05478156  0.99659436 -0.27903233]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252758",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "2.000659",
                        "_xmipp_angleDiff": "3.309306",
                        "item_id": 9,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_9_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78414797 -0.5790823   0.22310457 -8.97540316]\n [ 0.51796123  0.80874269  0.27866005  3.87275651]\n [-0.3418013  -0.10295119  0.93411612  0.98838994]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.2568632  -0.92786587  0.27034463  3.48348222]\n [ 0.89625294 -0.12403618  0.42584704 -9.55883671]\n [-0.36159641  0.3516816   0.86346284  3.62362038]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.93405892  0.27502643 -0.22780341  2.14355319]\n [-0.12735959  0.85248765  0.5069954  -0.08953158]\n [ 0.33363673 -0.44455063  0.83130095  0.64200675]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.7693032   0.62559983  0.12960496  3.52637813]\n [-0.51833955 -0.72976691  0.44582999 -0.18883621]\n [ 0.37349257  0.27579906  0.88568515 -0.42097041]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.6303571  -0.75293312  0.18905461  9.31925591]\n [ 0.77164224 -0.58105417  0.25873598 -3.33837309]\n [-0.08495992  0.30897859  0.94726662 -0.94808694]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78856762 -0.61182168 -0.06193006 -0.9250512 ]\n [ 0.53773231  0.63718818  0.55211882 -1.44500828]\n [-0.29833716 -0.46868482  0.83146225  0.89063309]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.18816311  0.98181135 -0.02532028  2.29158808]\n [-0.9561652  -0.17723657  0.23309934  5.30156682]\n [ 0.2243719   0.06807106  0.97212323 -1.21154195]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.204117",
                        "_xmipp_angleDiff": "0.443415",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75751313  0.42320809  0.49706012 -3.39168663]\n [-0.64889735  0.57146996  0.5023488  -0.61785272]\n [-0.07145685 -0.70307681  0.70751461  2.82149617]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.184999",
                        "_xmipp_angleDiff": "0.401908",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85497991  0.51678712  0.04405035  0.24215728]\n [-0.48099521 -0.82179991  0.30543168  6.55800621]\n [ 0.19404374  0.23994994  0.95119454 -2.11701172]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.31321989  0.94248075  0.11671901  7.79790485]\n [-0.9280199  -0.3298551   0.17313197  9.90357   ]\n [ 0.20167391 -0.05408918  0.97795807 -2.68394771]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74937051 -0.64091537 -0.166347   -4.96228928]\n [ 0.61940181 -0.76731332  0.16604718  1.98734963]\n [-0.23406246  0.02139523  0.97198612 -1.18875745]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px) \nInput: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px) \nOutput: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9567_XmippProtCompareAngles.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "9620",
        "object.label": "subset <2 degrees, <1 pixel",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/009567_XmippProtCompareAngles/particles_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "9567.outputParticles",
        "output": [
            {
                "outputName": "9620.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1903,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96218756  0.21740911 -0.16409868  0.18806733]\n [-0.25350379 -0.93514444  0.24746861  0.81590146]\n [-0.09965404  0.27971085  0.95489838 -0.17912733]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.79594017  0.58213922 -0.16611194 -1.06415569]\n [-0.51587682  0.79582032  0.31708221 -0.21617294]\n [ 0.31678125 -0.16668517  0.93373749 -0.11590449]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94491728  0.15829743  0.28648429  3.08606937]\n [-0.24209552  0.92706303  0.28625843 -0.57024773]\n [-0.22027502 -0.33984711  0.91432098 -0.78842352]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78414797 -0.5790823   0.22310457 -8.97540316]\n [ 0.51796123  0.80874269  0.27866005  3.87275651]\n [-0.3418013  -0.10295119  0.93411612  0.98838994]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.2568632  -0.92786587  0.27034463  3.48348222]\n [ 0.89625294 -0.12403618  0.42584704 -9.55883671]\n [-0.36159641  0.3516816   0.86346284  3.62362038]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.93405892  0.27502643 -0.22780341  2.14355319]\n [-0.12735959  0.85248765  0.5069954  -0.08953158]\n [ 0.33363673 -0.44455063  0.83130095  0.64200675]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.7693032   0.62559983  0.12960496  3.52637813]\n [-0.51833955 -0.72976691  0.44582999 -0.18883621]\n [ 0.37349257  0.27579906  0.88568515 -0.42097041]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.6303571  -0.75293312  0.18905461  9.31925591]\n [ 0.77164224 -0.58105417  0.25873598 -3.33837309]\n [-0.08495992  0.30897859  0.94726662 -0.94808694]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78856762 -0.61182168 -0.06193006 -0.9250512 ]\n [ 0.53773231  0.63718818  0.55211882 -1.44500828]\n [-0.29833716 -0.46868482  0.83146225  0.89063309]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.18816311  0.98181135 -0.02532028  2.29158808]\n [-0.9561652  -0.17723657  0.23309934  5.30156682]\n [ 0.2243719   0.06807106  0.97212323 -1.21154195]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.204117",
                        "_xmipp_angleDiff": "0.443415",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75751313  0.42320809  0.49706012 -3.39168663]\n [-0.64889735  0.57146996  0.5023488  -0.61785272]\n [-0.07145685 -0.70307681  0.70751461  2.82149617]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.184999",
                        "_xmipp_angleDiff": "0.401908",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85497991  0.51678712  0.04405035  0.24215728]\n [-0.48099521 -0.82179991  0.30543168  6.55800621]\n [ 0.19404374  0.23994994  0.95119454 -2.11701172]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.31321989  0.94248075  0.11671901  7.79790485]\n [-0.9280199  -0.3298551   0.17313197  9.90357   ]\n [ 0.20167391 -0.05408918  0.97795807 -2.68394771]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74937051 -0.64091537 -0.166347   -4.96228928]\n [ 0.61940181 -0.76731332  0.16604718  1.98734963]\n [-0.23406246  0.02139523  0.97198612 -1.18875745]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "28",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.62142607 -0.75510291 -0.208924    6.25475743]\n [ 0.55171147 -0.61108984  0.56761225 -8.40795923]\n [-0.55627699  0.23746327  0.79634609  7.63390395]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266571",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.282037",
                        "_xmipp_angleDiff": "0.09031",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620.outputParticles_28_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "A subset of _SetOfParticles_ was created, discarding *41* items (2.1 %) from the input set.Input: SetOfParticles (1944 items, 250 x 250, 0.74 \u212b/px) \nOutput: SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9620_ProtUserSubSet.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "pwem",
        "pluginVersion": "3.0.6"
    },
    {
        "object.className": "XmippProtReconstructHighRes",
        "object.id": "9673",
        "object.label": "xmipp3 - highres angles&shifts",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "doContinue": false,
        "particleRadius": 76,
        "symmetryGroup": "o",
        "saveSpace": true,
        "nextLowPass": true,
        "nextResolutionCriterion": 0.5,
        "nextResolutionOffset": 2.0,
        "nextSpherical": true,
        "nextPositivity": true,
        "nextDropout": 0.0,
        "nextReferenceScript": "",
        "nextRemove": true,
        "splitMethod": 1,
        "multiresolution": true,
        "angularMaxShift": 10.0,
        "angularMinTilt": 0.0,
        "angularMaxTilt": 180.0,
        "alignmentMethod": 1,
        "numberOfIterations": 1,
        "NimgsSGD": 250,
        "alphaSGD": 0.1,
        "restrictReconstructionAngles": false,
        "angularMinTiltReconstruct": 88.0,
        "angularMaxTiltReconstruct": 92.0,
        "maximumTargetResolution": "2",
        "numberOfPerturbations": 1,
        "numberOfReplicates": 1,
        "contShift": true,
        "contMaxShiftVariation": 2.0,
        "contScale": false,
        "contMaxScale": 0.02,
        "contAngles": true,
        "contGrayValues": false,
        "contMaxGrayScale": 0.5,
        "contMaxGrayShift": 3.0,
        "contDefocus": false,
        "contMaxDefocus": 200.0,
        "contPadding": 2,
        "weightSSNR": false,
        "weightContinuous": false,
        "weightJumper": false,
        "weightCC": true,
        "weightCCmin": 0.1,
        "postSymmetryWithinMask": false,
        "postSymmetryWithinMaskType": "i1",
        "postSymmetryHelical": false,
        "postSymmetryHelicalRadius": -1,
        "postSymmetryHelicalDihedral": false,
        "postSymmetryHelicalMinRot": 0.0,
        "postSymmetryHelicalMaxRot": 360.0,
        "postSymmetryHelicalMinZ": 0.0,
        "postSymmetryHelicalMaxZ": 40.0,
        "postScript": "",
        "postSignificantDenoise": true,
        "postFilterBank": true,
        "postLaplacian": true,
        "postDeconvolve": true,
        "postSoftNeg": true,
        "postSoftNegK": 9.0,
        "postDifference": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputVolumes": "8940.outputVolume",
        "inputParticles": "9620.outputParticles",
        "output": [
            {
                "outputName": "9673.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volumeAvg.mrc",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volume01.vol', 'Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volume02.vol']",
                        "item_id": 9775,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputVolume_volumeAvg"
                    }
                ]
            },
            {
                "outputName": "9673.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1903,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96247234  0.21623866 -0.1639751  -0.78757027]\n [-0.25263588 -0.93460062  0.25039327  1.27554558]\n [-0.09910652  0.28242259  0.95415689 -0.47007986]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "_xmipp_shiftX": "0.482354",
                        "_xmipp_shiftY": "-1.49519",
                        "_xmipp_angleTilt": "17.415979",
                        "_xmipp_angleRot": "123.219595",
                        "_xmipp_weight": "0.432608",
                        "_xmipp_cost": "0.142636",
                        "_xmipp_weightContinuous2": "0.631421",
                        "_xmipp_costPerc": "0.369565",
                        "_xmipp_corrIdx": "0.118069",
                        "_xmipp_corrMask": "0.00132",
                        "_xmipp_corrWeight": "0.0006196399",
                        "_xmipp_imedValue": "546.790906",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80470535  0.57015182 -0.16545754 -0.91999525]\n [-0.50560674  0.80424552  0.3123315   1.13454926]\n [ 0.31114486 -0.16767838  0.93545328 -0.54152959]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "_xmipp_shiftX": "-1.482455",
                        "_xmipp_shiftY": "0.478722",
                        "_xmipp_angleTilt": "20.698501",
                        "_xmipp_angleRot": "117.912396",
                        "_xmipp_weight": "0.823913",
                        "_xmipp_cost": "0.160159",
                        "_xmipp_weightContinuous2": "0.708991",
                        "_xmipp_costPerc": "0.804348",
                        "_xmipp_corrIdx": "0.142552",
                        "_xmipp_corrMask": "0.001584",
                        "_xmipp_corrWeight": "0.001009",
                        "_xmipp_imedValue": "544.053587",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94019652  0.16162146  0.29984832  2.4287466 ]\n [-0.25178062  0.92262839  0.29217012 -0.17116695]\n [-0.22942761 -0.35019332  0.90814515 -0.74684727]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "_xmipp_shiftX": "2.497943",
                        "_xmipp_shiftY": "0.496155",
                        "_xmipp_angleTilt": "24.74973",
                        "_xmipp_angleRot": "44.256942",
                        "_xmipp_weight": "0.608695",
                        "_xmipp_cost": "0.150752",
                        "_xmipp_weightContinuous2": "0.732891",
                        "_xmipp_costPerc": "0.565217",
                        "_xmipp_corrIdx": "0.14231",
                        "_xmipp_corrMask": "0.001801",
                        "_xmipp_corrWeight": "0.0008220354",
                        "_xmipp_imedValue": "553.206132",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78606605 -0.57828924  0.21836142 -8.66731256]\n [ 0.52027778  0.80970884  0.27144543  3.22730903]\n [-0.33378314 -0.09976544  0.93735568  1.08450655]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "_xmipp_shiftX": "-5.495973",
                        "_xmipp_shiftY": "7.517198",
                        "_xmipp_angleTilt": "20.387884",
                        "_xmipp_angleRot": "51.185428",
                        "_xmipp_weight": "0.197826",
                        "_xmipp_cost": "0.123276",
                        "_xmipp_weightContinuous2": "0.599315",
                        "_xmipp_costPerc": "0.108696",
                        "_xmipp_corrIdx": "0.097912",
                        "_xmipp_corrMask": "0.001793",
                        "_xmipp_corrWeight": "0.0007542943",
                        "_xmipp_imedValue": "555.598734",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.24878577 -0.93191355  0.26389918  3.75749093]\n [ 0.90200713 -0.12367054  0.41362874 -8.40741586]\n [-0.35282967  0.34094389  0.87136014  2.85295358]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "_xmipp_shiftX": "-9.524966",
                        "_xmipp_shiftY": "-1.48921",
                        "_xmipp_angleTilt": "29.382917",
                        "_xmipp_angleRot": "57.461726",
                        "_xmipp_weight": "0.96087",
                        "_xmipp_cost": "0.173892",
                        "_xmipp_weightContinuous2": "0.845388",
                        "_xmipp_costPerc": "0.956522",
                        "_xmipp_corrIdx": "0.145652",
                        "_xmipp_corrMask": "0.002007",
                        "_xmipp_corrWeight": "0.00101",
                        "_xmipp_imedValue": "545.515255",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.9334873   0.27900208 -0.22529826  2.45959184]\n [-0.13006114  0.84887886  0.51233659  0.08707534]\n [ 0.3341939  -0.44895715  0.82870496  0.61485076]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "_xmipp_shiftX": "2.490152",
                        "_xmipp_shiftY": "0.484106",
                        "_xmipp_angleTilt": "34.034065",
                        "_xmipp_angleRot": "113.737328",
                        "_xmipp_weight": "1.0",
                        "_xmipp_cost": "0.193972",
                        "_xmipp_weightContinuous2": "0.858675",
                        "_xmipp_costPerc": "1.0",
                        "_xmipp_corrIdx": "0.176512",
                        "_xmipp_corrMask": "0.002197",
                        "_xmipp_corrWeight": "0.001106",
                        "_xmipp_imedValue": "556.037766",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76986218  0.62442668  0.13192253  4.24315314]\n [-0.51933698 -0.73308176  0.43918133 -0.01453419]\n [ 0.37094653  0.26959685  0.88865978 -0.62271788]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "_xmipp_shiftX": "-3.49009",
                        "_xmipp_shiftY": "2.49231",
                        "_xmipp_angleTilt": "27.294684",
                        "_xmipp_angleRot": "73.280635",
                        "_xmipp_weight": "0.902174",
                        "_xmipp_cost": "0.164425",
                        "_xmipp_weightContinuous2": "0.799363",
                        "_xmipp_costPerc": "0.891304",
                        "_xmipp_corrIdx": "0.131205",
                        "_xmipp_corrMask": "0.002181",
                        "_xmipp_corrWeight": "0.0007856614",
                        "_xmipp_imedValue": "544.72933",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.64177296 -0.74488082  0.18242815  8.91406498]\n [ 0.76242535 -0.59407364  0.25648409 -2.47050505]\n [-0.08267433  0.3036924   0.94917642 -1.04567611]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "_xmipp_shiftX": "-7.517931",
                        "_xmipp_shiftY": "-5.489818",
                        "_xmipp_angleTilt": "18.345392",
                        "_xmipp_angleRot": "54.577091",
                        "_xmipp_weight": "0.373913",
                        "_xmipp_cost": "0.137279",
                        "_xmipp_weightContinuous2": "0.607706",
                        "_xmipp_costPerc": "0.304348",
                        "_xmipp_corrIdx": "0.180133",
                        "_xmipp_corrMask": "0.001992",
                        "_xmipp_corrWeight": "0.0009825579",
                        "_xmipp_imedValue": "538.327542",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78274967 -0.61883651 -0.06591153 -0.85753163]\n [ 0.54616752  0.63231268  0.54943763 -1.13642861]\n [-0.29833537 -0.46607086  0.83293095  0.68177971]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "_xmipp_shiftX": "-1.495312",
                        "_xmipp_shiftY": "-0.505664",
                        "_xmipp_angleTilt": "33.598995",
                        "_xmipp_angleRot": "96.840616",
                        "_xmipp_weight": "0.921739",
                        "_xmipp_cost": "0.169156",
                        "_xmipp_weightContinuous2": "0.822363",
                        "_xmipp_costPerc": "0.913043",
                        "_xmipp_corrIdx": "0.179976",
                        "_xmipp_corrMask": "0.002198",
                        "_xmipp_corrWeight": "0.001201",
                        "_xmipp_imedValue": "549.938301",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.17888891  0.98349426 -0.02716227  2.4377223 ]\n [-0.95793954 -0.16781151  0.2327899   5.02249196]\n [ 0.22438939  0.06766335  0.97214766 -1.13457182]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.204117",
                        "_xmipp_angleDiff": "0.443415",
                        "_xmipp_shiftX": "-5.501911",
                        "_xmipp_shiftY": "1.477885",
                        "_xmipp_angleTilt": "13.554443",
                        "_xmipp_angleRot": "96.655263",
                        "_xmipp_weight": "0.393478",
                        "_xmipp_cost": "0.140806",
                        "_xmipp_weightContinuous2": "0.684538",
                        "_xmipp_costPerc": "0.326087",
                        "_xmipp_corrIdx": "0.160169",
                        "_xmipp_corrMask": "0.002314",
                        "_xmipp_corrWeight": "0.001089",
                        "_xmipp_imedValue": "550.2947",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75825648  0.42656731  0.49303898 -3.39661943]\n [-0.6487515   0.56857203  0.50581354 -0.36596758]\n [-0.06456465 -0.70339618  0.70785961  2.62732486]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.184999",
                        "_xmipp_angleDiff": "0.401908",
                        "_xmipp_shiftX": "-2.507719",
                        "_xmipp_shiftY": "-3.505016",
                        "_xmipp_angleTilt": "44.938967",
                        "_xmipp_angleRot": "45.732729",
                        "_xmipp_weight": "0.628261",
                        "_xmipp_cost": "0.150885",
                        "_xmipp_weightContinuous2": "0.733538",
                        "_xmipp_costPerc": "0.586957",
                        "_xmipp_corrIdx": "0.154176",
                        "_xmipp_corrMask": "0.0019",
                        "_xmipp_corrWeight": "0.0009558109",
                        "_xmipp_imedValue": "569.710865",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85899293  0.50985913  0.04663504  1.04809586]\n [-0.47281234 -0.82491283  0.30978591  6.67080795]\n [ 0.19641701  0.24405428  0.94966197 -2.22752972]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "_xmipp_shiftX": "-4.491872",
                        "_xmipp_shiftY": "-5.512092",
                        "_xmipp_angleTilt": "18.256796",
                        "_xmipp_angleRot": "81.439002",
                        "_xmipp_weight": "0.647826",
                        "_xmipp_cost": "0.153025",
                        "_xmipp_weightContinuous2": "0.743941",
                        "_xmipp_costPerc": "0.608696",
                        "_xmipp_corrIdx": "0.179344",
                        "_xmipp_corrMask": "0.001413",
                        "_xmipp_corrWeight": "0.0008797888",
                        "_xmipp_imedValue": "544.587759",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.3128495   0.94192009  0.12211359  7.82960487]\n [-0.92614105 -0.33104271  0.18075808  9.17695852]\n [ 0.21068448 -0.05654433  0.97591741 -2.67943832]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "_xmipp_shiftX": "-11.513162",
                        "_xmipp_shiftY": "4.488404",
                        "_xmipp_angleTilt": "12.59983",
                        "_xmipp_angleRot": "55.95847",
                        "_xmipp_weight": "0.804348",
                        "_xmipp_cost": "0.15836",
                        "_xmipp_weightContinuous2": "0.701027",
                        "_xmipp_costPerc": "0.782609",
                        "_xmipp_corrIdx": "0.146461",
                        "_xmipp_corrMask": "0.001894",
                        "_xmipp_corrWeight": "0.0008596644",
                        "_xmipp_imedValue": "558.94351",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74670653 -0.64458776 -0.16412183 -4.34713397]\n [ 0.62318928 -0.76422004  0.16614109  1.65455915]\n [-0.2325177   0.02177967  0.97234827 -1.01645662]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "_xmipp_shiftX": "4.513481",
                        "_xmipp_shiftY": "1.515524",
                        "_xmipp_angleTilt": "13.505312",
                        "_xmipp_angleRot": "134.649693",
                        "_xmipp_weight": "0.471739",
                        "_xmipp_cost": "0.145799",
                        "_xmipp_weightContinuous2": "0.645422",
                        "_xmipp_costPerc": "0.413043",
                        "_xmipp_corrIdx": "0.134841",
                        "_xmipp_corrMask": "0.001827",
                        "_xmipp_corrWeight": "0.0008695299",
                        "_xmipp_imedValue": "561.926465",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "28",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.63260769 -0.74726304 -0.20348329  6.76518119]\n [ 0.54859189 -0.61781844  0.56333587 -7.79531879]\n [-0.54667581  0.24474133  0.80077915  7.20296485]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266571",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.282037",
                        "_xmipp_angleDiff": "0.09031",
                        "_xmipp_shiftX": "-12.493841",
                        "_xmipp_shiftY": "1.523585",
                        "_xmipp_angleTilt": "36.79543",
                        "_xmipp_angleRot": "109.860293",
                        "_xmipp_weight": "0.686957",
                        "_xmipp_cost": "0.153531",
                        "_xmipp_weightContinuous2": "0.67965",
                        "_xmipp_costPerc": "0.652174",
                        "_xmipp_corrIdx": "0.138336",
                        "_xmipp_corrMask": "0.00176",
                        "_xmipp_corrWeight": "0.0008395332",
                        "_xmipp_imedValue": "557.908463",
                        "_xmipp_angleTemp": "0.0",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673.outputParticles_28_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Symmetry: oNumber of iterations: 1Local alignment, refining: shifts angles Weights: Input: SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/9673_XmippProtReconstructHighRes.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtMultiRefAlignability",
        "object.id": "10312",
        "object.label": "xmipp3 - multireference alignability",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "symmetryGroup": "o",
        "angularSampling": 5.0,
        "numOrientations": 7.0,
        "doNotUseWeights": false,
        "pseudoSymmetryGroup": "",
        "minTilt": 0.0,
        "maxTilt": 180.0,
        "doWiener": true,
        "isIsotropic": true,
        "padding_factor": 2,
        "wiener_constant": -1.0,
        "correctEnvelope": false,
        "targetResolution": 8.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputVolumes": "9673.outputVolume",
        "inputParticles": "9673.outputParticles",
        "output": [
            {
                "outputName": "10312.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1903,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96247234  0.21623866 -0.1639751  -0.78757027]\n [-0.25263588 -0.93460062  0.25039327  1.27554558]\n [-0.09910652  0.28242259  0.95415689 -0.47007986]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "_xmipp_shiftX": "0.482354",
                        "_xmipp_shiftY": "-1.49519",
                        "_xmipp_angleTilt": "17.415979",
                        "_xmipp_angleRot": "123.219595",
                        "_xmipp_weight": "1.04436480384",
                        "_xmipp_cost": "0.142636",
                        "_xmipp_weightContinuous2": "0.631421",
                        "_xmipp_costPerc": "0.369565",
                        "_xmipp_corrIdx": "0.118069",
                        "_xmipp_corrMask": "0.00132",
                        "_xmipp_corrWeight": "0.0006196399",
                        "_xmipp_imedValue": "546.790906",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.01736",
                        "_xmipp_scoreAlignabilityAccuracy": "1.026544",
                        "_xmipp_scoreMirror": "1.026544",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80470535  0.57015182 -0.16545754 -0.91999525]\n [-0.50560674  0.80424552  0.3123315   1.13454926]\n [ 0.31114486 -0.16767838  0.93545328 -0.54152959]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "_xmipp_shiftX": "-1.482455",
                        "_xmipp_shiftY": "0.478722",
                        "_xmipp_angleTilt": "20.698501",
                        "_xmipp_angleRot": "117.912396",
                        "_xmipp_weight": "0.7001915687550001",
                        "_xmipp_cost": "0.160159",
                        "_xmipp_weightContinuous2": "0.708991",
                        "_xmipp_costPerc": "0.804348",
                        "_xmipp_corrIdx": "0.142552",
                        "_xmipp_corrMask": "0.001584",
                        "_xmipp_corrWeight": "0.001009",
                        "_xmipp_imedValue": "544.053587",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.797571",
                        "_xmipp_scoreAlignabilityAccuracy": "0.877905",
                        "_xmipp_scoreMirror": "0.877905",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94019652  0.16162146  0.29984832  2.4287466 ]\n [-0.25178062  0.92262839  0.29217012 -0.17116695]\n [-0.22942761 -0.35019332  0.90814515 -0.74684727]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "_xmipp_shiftX": "2.497943",
                        "_xmipp_shiftY": "0.496155",
                        "_xmipp_angleTilt": "24.74973",
                        "_xmipp_angleRot": "44.256942",
                        "_xmipp_weight": "0.585010719975",
                        "_xmipp_cost": "0.150752",
                        "_xmipp_weightContinuous2": "0.732891",
                        "_xmipp_costPerc": "0.565217",
                        "_xmipp_corrIdx": "0.14231",
                        "_xmipp_corrMask": "0.001801",
                        "_xmipp_corrWeight": "0.0008220354",
                        "_xmipp_imedValue": "553.206132",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.781825",
                        "_xmipp_scoreAlignabilityAccuracy": "0.748263",
                        "_xmipp_scoreMirror": "0.748263",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78606605 -0.57828924  0.21836142 -8.66731256]\n [ 0.52027778  0.80970884  0.27144543  3.22730903]\n [-0.33378314 -0.09976544  0.93735568  1.08450655]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "_xmipp_shiftX": "-5.495973",
                        "_xmipp_shiftY": "7.517198",
                        "_xmipp_angleTilt": "20.387884",
                        "_xmipp_angleRot": "51.185428",
                        "_xmipp_weight": "0.898527970692",
                        "_xmipp_cost": "0.123276",
                        "_xmipp_weightContinuous2": "0.599315",
                        "_xmipp_costPerc": "0.108696",
                        "_xmipp_corrIdx": "0.097912",
                        "_xmipp_corrMask": "0.001793",
                        "_xmipp_corrWeight": "0.0007542943",
                        "_xmipp_imedValue": "555.598734",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.909887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.987516",
                        "_xmipp_scoreMirror": "0.987516",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.24878577 -0.93191355  0.26389918  3.75749093]\n [ 0.90200713 -0.12367054  0.41362874 -8.40741586]\n [-0.35282967  0.34094389  0.87136014  2.85295358]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "_xmipp_shiftX": "-9.524966",
                        "_xmipp_shiftY": "-1.48921",
                        "_xmipp_angleTilt": "29.382917",
                        "_xmipp_angleRot": "57.461726",
                        "_xmipp_weight": "0.38170392690000005",
                        "_xmipp_cost": "0.173892",
                        "_xmipp_weightContinuous2": "0.845388",
                        "_xmipp_costPerc": "0.956522",
                        "_xmipp_corrIdx": "0.145652",
                        "_xmipp_corrMask": "0.002007",
                        "_xmipp_corrWeight": "0.00101",
                        "_xmipp_imedValue": "545.515255",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.540795",
                        "_xmipp_scoreAlignabilityAccuracy": "0.70582",
                        "_xmipp_scoreMirror": "0.70582",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.9334873   0.27900208 -0.22529826  2.45959184]\n [-0.13006114  0.84887886  0.51233659  0.08707534]\n [ 0.3341939  -0.44895715  0.82870496  0.61485076]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "_xmipp_shiftX": "2.490152",
                        "_xmipp_shiftY": "0.484106",
                        "_xmipp_angleTilt": "34.034065",
                        "_xmipp_angleRot": "113.737328",
                        "_xmipp_weight": "0.6997512759650001",
                        "_xmipp_cost": "0.193972",
                        "_xmipp_weightContinuous2": "0.858675",
                        "_xmipp_costPerc": "1.0",
                        "_xmipp_corrIdx": "0.176512",
                        "_xmipp_corrMask": "0.002197",
                        "_xmipp_corrWeight": "0.001106",
                        "_xmipp_imedValue": "556.037766",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.045555",
                        "_xmipp_scoreAlignabilityAccuracy": "0.669263",
                        "_xmipp_scoreMirror": "0.669263",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76986218  0.62442668  0.13192253  4.24315314]\n [-0.51933698 -0.73308176  0.43918133 -0.01453419]\n [ 0.37094653  0.26959685  0.88865978 -0.62271788]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "_xmipp_shiftX": "-3.49009",
                        "_xmipp_shiftY": "2.49231",
                        "_xmipp_angleTilt": "27.294684",
                        "_xmipp_angleRot": "73.280635",
                        "_xmipp_weight": "0.77471984412",
                        "_xmipp_cost": "0.164425",
                        "_xmipp_weightContinuous2": "0.799363",
                        "_xmipp_costPerc": "0.891304",
                        "_xmipp_corrIdx": "0.131205",
                        "_xmipp_corrMask": "0.002181",
                        "_xmipp_corrWeight": "0.0007856614",
                        "_xmipp_imedValue": "544.72933",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.99278",
                        "_xmipp_scoreAlignabilityAccuracy": "0.780354",
                        "_xmipp_scoreMirror": "0.780354",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.64177296 -0.74488082  0.18242815  8.91406498]\n [ 0.76242535 -0.59407364  0.25648409 -2.47050505]\n [-0.08267433  0.3036924   0.94917642 -1.04567611]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "_xmipp_shiftX": "-7.517931",
                        "_xmipp_shiftY": "-5.489818",
                        "_xmipp_angleTilt": "18.345392",
                        "_xmipp_angleRot": "54.577091",
                        "_xmipp_weight": "1.3398488007100002",
                        "_xmipp_cost": "0.137279",
                        "_xmipp_weightContinuous2": "0.607706",
                        "_xmipp_costPerc": "0.304348",
                        "_xmipp_corrIdx": "0.180133",
                        "_xmipp_corrMask": "0.001992",
                        "_xmipp_corrWeight": "0.0009825579",
                        "_xmipp_imedValue": "538.327542",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.974354",
                        "_xmipp_scoreAlignabilityAccuracy": "1.375115",
                        "_xmipp_scoreMirror": "1.375115",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78274967 -0.61883651 -0.06591153 -0.85753163]\n [ 0.54616752  0.63231268  0.54943763 -1.13642861]\n [-0.29833537 -0.46607086  0.83293095  0.68177971]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "_xmipp_shiftX": "-1.495312",
                        "_xmipp_shiftY": "-0.505664",
                        "_xmipp_angleTilt": "33.598995",
                        "_xmipp_angleRot": "96.840616",
                        "_xmipp_weight": "1.2617232327839998",
                        "_xmipp_cost": "0.169156",
                        "_xmipp_weightContinuous2": "0.822363",
                        "_xmipp_costPerc": "0.913043",
                        "_xmipp_corrIdx": "0.179976",
                        "_xmipp_corrMask": "0.002198",
                        "_xmipp_corrWeight": "0.001201",
                        "_xmipp_imedValue": "549.938301",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.605976",
                        "_xmipp_scoreAlignabilityAccuracy": "2.082134",
                        "_xmipp_scoreMirror": "2.082134",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "20",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.17888891  0.98349426 -0.02716227  2.4377223 ]\n [-0.95793954 -0.16781151  0.2327899   5.02249196]\n [ 0.22438939  0.06766335  0.97214766 -1.13457182]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.268102",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.204117",
                        "_xmipp_angleDiff": "0.443415",
                        "_xmipp_shiftX": "-5.501911",
                        "_xmipp_shiftY": "1.477885",
                        "_xmipp_angleTilt": "13.554443",
                        "_xmipp_angleRot": "96.655263",
                        "_xmipp_weight": "-85.07093031638699",
                        "_xmipp_cost": "0.140806",
                        "_xmipp_weightContinuous2": "0.684538",
                        "_xmipp_costPerc": "0.326087",
                        "_xmipp_corrIdx": "0.160169",
                        "_xmipp_corrMask": "0.002314",
                        "_xmipp_corrWeight": "0.001089",
                        "_xmipp_imedValue": "550.2947",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.382443",
                        "_xmipp_scoreAlignabilityAccuracy": "-222.440809",
                        "_xmipp_scoreMirror": "-222.440809",
                        "item_id": 20,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_20_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "22",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.75825648  0.42656731  0.49303898 -3.39661943]\n [-0.6487515   0.56857203  0.50581354 -0.36596758]\n [-0.06456465 -0.70339618  0.70785961  2.62732486]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.263682",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.184999",
                        "_xmipp_angleDiff": "0.401908",
                        "_xmipp_shiftX": "-2.507719",
                        "_xmipp_shiftY": "-3.505016",
                        "_xmipp_angleTilt": "44.938967",
                        "_xmipp_angleRot": "45.732729",
                        "_xmipp_weight": "0.0390800694",
                        "_xmipp_cost": "0.150885",
                        "_xmipp_weightContinuous2": "0.733538",
                        "_xmipp_costPerc": "0.586957",
                        "_xmipp_corrIdx": "0.154176",
                        "_xmipp_corrMask": "0.0019",
                        "_xmipp_corrWeight": "0.0009558109",
                        "_xmipp_imedValue": "569.710865",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.190588",
                        "_xmipp_scoreAlignabilityAccuracy": "0.20505",
                        "_xmipp_scoreMirror": "0.20505",
                        "item_id": 22,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_22_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85899293  0.50985913  0.04663504  1.04809586]\n [-0.47281234 -0.82491283  0.30978591  6.67080795]\n [ 0.19641701  0.24405428  0.94966197 -2.22752972]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "_xmipp_shiftX": "-4.491872",
                        "_xmipp_shiftY": "-5.512092",
                        "_xmipp_angleTilt": "18.256796",
                        "_xmipp_angleRot": "81.439002",
                        "_xmipp_weight": "0.49019245504",
                        "_xmipp_cost": "0.153025",
                        "_xmipp_weightContinuous2": "0.743941",
                        "_xmipp_costPerc": "0.608696",
                        "_xmipp_corrIdx": "0.179344",
                        "_xmipp_corrMask": "0.001413",
                        "_xmipp_corrWeight": "0.0008797888",
                        "_xmipp_imedValue": "544.587759",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.811456",
                        "_xmipp_scoreAlignabilityAccuracy": "0.60409",
                        "_xmipp_scoreMirror": "0.60409",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.3128495   0.94192009  0.12211359  7.82960487]\n [-0.92614105 -0.33104271  0.18075808  9.17695852]\n [ 0.21068448 -0.05654433  0.97591741 -2.67943832]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "_xmipp_shiftX": "-11.513162",
                        "_xmipp_shiftY": "4.488404",
                        "_xmipp_angleTilt": "12.59983",
                        "_xmipp_angleRot": "55.95847",
                        "_xmipp_weight": "0.41084294023500006",
                        "_xmipp_cost": "0.15836",
                        "_xmipp_weightContinuous2": "0.701027",
                        "_xmipp_costPerc": "0.782609",
                        "_xmipp_corrIdx": "0.146461",
                        "_xmipp_corrMask": "0.001894",
                        "_xmipp_corrWeight": "0.0008596644",
                        "_xmipp_imedValue": "558.94351",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.707941",
                        "_xmipp_scoreAlignabilityAccuracy": "0.580335",
                        "_xmipp_scoreMirror": "0.580335",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74670653 -0.64458776 -0.16412183 -4.34713397]\n [ 0.62318928 -0.76422004  0.16614109  1.65455915]\n [-0.2325177   0.02177967  0.97234827 -1.01645662]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "_xmipp_shiftX": "4.513481",
                        "_xmipp_shiftY": "1.515524",
                        "_xmipp_angleTilt": "13.505312",
                        "_xmipp_angleRot": "134.649693",
                        "_xmipp_weight": "0.343879533868",
                        "_xmipp_cost": "0.145799",
                        "_xmipp_weightContinuous2": "0.645422",
                        "_xmipp_costPerc": "0.413043",
                        "_xmipp_corrIdx": "0.134841",
                        "_xmipp_corrMask": "0.001827",
                        "_xmipp_corrWeight": "0.0008695299",
                        "_xmipp_imedValue": "561.926465",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.549887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.625364",
                        "_xmipp_scoreMirror": "0.625364",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "28",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.63260769 -0.74726304 -0.20348329  6.76518119]\n [ 0.54859189 -0.61781844  0.56333587 -7.79531879]\n [-0.54667581  0.24474133  0.80077915  7.20296485]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266571",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.282037",
                        "_xmipp_angleDiff": "0.09031",
                        "_xmipp_shiftX": "-12.493841",
                        "_xmipp_shiftY": "1.523585",
                        "_xmipp_angleTilt": "36.79543",
                        "_xmipp_angleRot": "109.860293",
                        "_xmipp_weight": "-0.545633002",
                        "_xmipp_cost": "0.153531",
                        "_xmipp_weightContinuous2": "0.67965",
                        "_xmipp_costPerc": "0.652174",
                        "_xmipp_corrIdx": "0.138336",
                        "_xmipp_corrMask": "0.00176",
                        "_xmipp_corrWeight": "0.0008395332",
                        "_xmipp_imedValue": "557.908463",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.554875",
                        "_xmipp_scoreAlignabilityAccuracy": "-0.983344",
                        "_xmipp_scoreMirror": "-0.983344",
                        "item_id": 28,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputParticles_28_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            },
            {
                "outputName": "10312.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 1,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volumeAvg.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volume01.vol', 'Runs/009673_XmippProtReconstructHighRes/extra/Iter001/volume02.vol']",
                        "weightAlignabilityPrecision": "0.942752",
                        "weightAlignabilityAccuracy": "0.794118",
                        "weightMirror": "0.794118",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312.outputVolumes_volumeAvg"
                    }
                ]
            }
        ],
        "summary": "Input particles:  9673.outputParticles.9781-----------------Input volume(s)_1: [Volume (250 x 250 x 250, 0.74 \u212b/px)]-----------------ALIGNABILITY ACCURACY parameter_1 : 0.794118ALIGNABILITY PRECISION parameter_1 : 0.942752ALIGNABILITY ACCURACY & PRECISION parameter_1 : 0.765231-----------------Input: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px) \nOutput: SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px)SetOfVolumes (1 items, 250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10312_XmippProtMultiRefAlignability.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "10397",
        "object.label": "wellAligned",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/010312_XmippProtMultiRefAlignability/particlesvol001__state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "10312.outputParticles",
        "output": [
            {
                "outputName": "10397.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1457,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96247234  0.21623866 -0.1639751  -0.78757027]\n [-0.25263588 -0.93460062  0.25039327  1.27554558]\n [-0.09910652  0.28242259  0.95415689 -0.47007986]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "_xmipp_shiftX": "0.482354",
                        "_xmipp_shiftY": "-1.49519",
                        "_xmipp_angleTilt": "17.415979",
                        "_xmipp_angleRot": "123.219595",
                        "_xmipp_weight": "1.04436480384",
                        "_xmipp_cost": "0.142636",
                        "_xmipp_weightContinuous2": "0.631421",
                        "_xmipp_costPerc": "0.369565",
                        "_xmipp_corrIdx": "0.118069",
                        "_xmipp_corrMask": "0.00132",
                        "_xmipp_corrWeight": "0.0006196399",
                        "_xmipp_imedValue": "546.790906",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.01736",
                        "_xmipp_scoreAlignabilityAccuracy": "1.026544",
                        "_xmipp_scoreMirror": "1.026544",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80470535  0.57015182 -0.16545754 -0.91999525]\n [-0.50560674  0.80424552  0.3123315   1.13454926]\n [ 0.31114486 -0.16767838  0.93545328 -0.54152959]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "_xmipp_shiftX": "-1.482455",
                        "_xmipp_shiftY": "0.478722",
                        "_xmipp_angleTilt": "20.698501",
                        "_xmipp_angleRot": "117.912396",
                        "_xmipp_weight": "0.7001915687550001",
                        "_xmipp_cost": "0.160159",
                        "_xmipp_weightContinuous2": "0.708991",
                        "_xmipp_costPerc": "0.804348",
                        "_xmipp_corrIdx": "0.142552",
                        "_xmipp_corrMask": "0.001584",
                        "_xmipp_corrWeight": "0.001009",
                        "_xmipp_imedValue": "544.053587",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.797571",
                        "_xmipp_scoreAlignabilityAccuracy": "0.877905",
                        "_xmipp_scoreMirror": "0.877905",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.94019652  0.16162146  0.29984832  2.4287466 ]\n [-0.25178062  0.92262839  0.29217012 -0.17116695]\n [-0.22942761 -0.35019332  0.90814515 -0.74684727]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "_xmipp_shiftX": "2.497943",
                        "_xmipp_shiftY": "0.496155",
                        "_xmipp_angleTilt": "24.74973",
                        "_xmipp_angleRot": "44.256942",
                        "_xmipp_weight": "0.585010719975",
                        "_xmipp_cost": "0.150752",
                        "_xmipp_weightContinuous2": "0.732891",
                        "_xmipp_costPerc": "0.565217",
                        "_xmipp_corrIdx": "0.14231",
                        "_xmipp_corrMask": "0.001801",
                        "_xmipp_corrWeight": "0.0008220354",
                        "_xmipp_imedValue": "553.206132",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.781825",
                        "_xmipp_scoreAlignabilityAccuracy": "0.748263",
                        "_xmipp_scoreMirror": "0.748263",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78606605 -0.57828924  0.21836142 -8.66731256]\n [ 0.52027778  0.80970884  0.27144543  3.22730903]\n [-0.33378314 -0.09976544  0.93735568  1.08450655]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "_xmipp_shiftX": "-5.495973",
                        "_xmipp_shiftY": "7.517198",
                        "_xmipp_angleTilt": "20.387884",
                        "_xmipp_angleRot": "51.185428",
                        "_xmipp_weight": "0.898527970692",
                        "_xmipp_cost": "0.123276",
                        "_xmipp_weightContinuous2": "0.599315",
                        "_xmipp_costPerc": "0.108696",
                        "_xmipp_corrIdx": "0.097912",
                        "_xmipp_corrMask": "0.001793",
                        "_xmipp_corrWeight": "0.0007542943",
                        "_xmipp_imedValue": "555.598734",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.909887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.987516",
                        "_xmipp_scoreMirror": "0.987516",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.24878577 -0.93191355  0.26389918  3.75749093]\n [ 0.90200713 -0.12367054  0.41362874 -8.40741586]\n [-0.35282967  0.34094389  0.87136014  2.85295358]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "_xmipp_shiftX": "-9.524966",
                        "_xmipp_shiftY": "-1.48921",
                        "_xmipp_angleTilt": "29.382917",
                        "_xmipp_angleRot": "57.461726",
                        "_xmipp_weight": "0.38170392690000005",
                        "_xmipp_cost": "0.173892",
                        "_xmipp_weightContinuous2": "0.845388",
                        "_xmipp_costPerc": "0.956522",
                        "_xmipp_corrIdx": "0.145652",
                        "_xmipp_corrMask": "0.002007",
                        "_xmipp_corrWeight": "0.00101",
                        "_xmipp_imedValue": "545.515255",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.540795",
                        "_xmipp_scoreAlignabilityAccuracy": "0.70582",
                        "_xmipp_scoreMirror": "0.70582",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.9334873   0.27900208 -0.22529826  2.45959184]\n [-0.13006114  0.84887886  0.51233659  0.08707534]\n [ 0.3341939  -0.44895715  0.82870496  0.61485076]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "_xmipp_shiftX": "2.490152",
                        "_xmipp_shiftY": "0.484106",
                        "_xmipp_angleTilt": "34.034065",
                        "_xmipp_angleRot": "113.737328",
                        "_xmipp_weight": "0.6997512759650001",
                        "_xmipp_cost": "0.193972",
                        "_xmipp_weightContinuous2": "0.858675",
                        "_xmipp_costPerc": "1.0",
                        "_xmipp_corrIdx": "0.176512",
                        "_xmipp_corrMask": "0.002197",
                        "_xmipp_corrWeight": "0.001106",
                        "_xmipp_imedValue": "556.037766",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.045555",
                        "_xmipp_scoreAlignabilityAccuracy": "0.669263",
                        "_xmipp_scoreMirror": "0.669263",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76986218  0.62442668  0.13192253  4.24315314]\n [-0.51933698 -0.73308176  0.43918133 -0.01453419]\n [ 0.37094653  0.26959685  0.88865978 -0.62271788]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "_xmipp_shiftX": "-3.49009",
                        "_xmipp_shiftY": "2.49231",
                        "_xmipp_angleTilt": "27.294684",
                        "_xmipp_angleRot": "73.280635",
                        "_xmipp_weight": "0.77471984412",
                        "_xmipp_cost": "0.164425",
                        "_xmipp_weightContinuous2": "0.799363",
                        "_xmipp_costPerc": "0.891304",
                        "_xmipp_corrIdx": "0.131205",
                        "_xmipp_corrMask": "0.002181",
                        "_xmipp_corrWeight": "0.0007856614",
                        "_xmipp_imedValue": "544.72933",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.99278",
                        "_xmipp_scoreAlignabilityAccuracy": "0.780354",
                        "_xmipp_scoreMirror": "0.780354",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.64177296 -0.74488082  0.18242815  8.91406498]\n [ 0.76242535 -0.59407364  0.25648409 -2.47050505]\n [-0.08267433  0.3036924   0.94917642 -1.04567611]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "_xmipp_shiftX": "-7.517931",
                        "_xmipp_shiftY": "-5.489818",
                        "_xmipp_angleTilt": "18.345392",
                        "_xmipp_angleRot": "54.577091",
                        "_xmipp_weight": "1.3398488007100002",
                        "_xmipp_cost": "0.137279",
                        "_xmipp_weightContinuous2": "0.607706",
                        "_xmipp_costPerc": "0.304348",
                        "_xmipp_corrIdx": "0.180133",
                        "_xmipp_corrMask": "0.001992",
                        "_xmipp_corrWeight": "0.0009825579",
                        "_xmipp_imedValue": "538.327542",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.974354",
                        "_xmipp_scoreAlignabilityAccuracy": "1.375115",
                        "_xmipp_scoreMirror": "1.375115",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78274967 -0.61883651 -0.06591153 -0.85753163]\n [ 0.54616752  0.63231268  0.54943763 -1.13642861]\n [-0.29833537 -0.46607086  0.83293095  0.68177971]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "_xmipp_shiftX": "-1.495312",
                        "_xmipp_shiftY": "-0.505664",
                        "_xmipp_angleTilt": "33.598995",
                        "_xmipp_angleRot": "96.840616",
                        "_xmipp_weight": "1.2617232327839998",
                        "_xmipp_cost": "0.169156",
                        "_xmipp_weightContinuous2": "0.822363",
                        "_xmipp_costPerc": "0.913043",
                        "_xmipp_corrIdx": "0.179976",
                        "_xmipp_corrMask": "0.002198",
                        "_xmipp_corrWeight": "0.001201",
                        "_xmipp_imedValue": "549.938301",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.605976",
                        "_xmipp_scoreAlignabilityAccuracy": "2.082134",
                        "_xmipp_scoreMirror": "2.082134",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85899293  0.50985913  0.04663504  1.04809586]\n [-0.47281234 -0.82491283  0.30978591  6.67080795]\n [ 0.19641701  0.24405428  0.94966197 -2.22752972]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "_xmipp_shiftX": "-4.491872",
                        "_xmipp_shiftY": "-5.512092",
                        "_xmipp_angleTilt": "18.256796",
                        "_xmipp_angleRot": "81.439002",
                        "_xmipp_weight": "0.49019245504",
                        "_xmipp_cost": "0.153025",
                        "_xmipp_weightContinuous2": "0.743941",
                        "_xmipp_costPerc": "0.608696",
                        "_xmipp_corrIdx": "0.179344",
                        "_xmipp_corrMask": "0.001413",
                        "_xmipp_corrWeight": "0.0008797888",
                        "_xmipp_imedValue": "544.587759",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.811456",
                        "_xmipp_scoreAlignabilityAccuracy": "0.60409",
                        "_xmipp_scoreMirror": "0.60409",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.3128495   0.94192009  0.12211359  7.82960487]\n [-0.92614105 -0.33104271  0.18075808  9.17695852]\n [ 0.21068448 -0.05654433  0.97591741 -2.67943832]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "_xmipp_shiftX": "-11.513162",
                        "_xmipp_shiftY": "4.488404",
                        "_xmipp_angleTilt": "12.59983",
                        "_xmipp_angleRot": "55.95847",
                        "_xmipp_weight": "0.41084294023500006",
                        "_xmipp_cost": "0.15836",
                        "_xmipp_weightContinuous2": "0.701027",
                        "_xmipp_costPerc": "0.782609",
                        "_xmipp_corrIdx": "0.146461",
                        "_xmipp_corrMask": "0.001894",
                        "_xmipp_corrWeight": "0.0008596644",
                        "_xmipp_imedValue": "558.94351",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.707941",
                        "_xmipp_scoreAlignabilityAccuracy": "0.580335",
                        "_xmipp_scoreMirror": "0.580335",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74670653 -0.64458776 -0.16412183 -4.34713397]\n [ 0.62318928 -0.76422004  0.16614109  1.65455915]\n [-0.2325177   0.02177967  0.97234827 -1.01645662]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "_xmipp_shiftX": "4.513481",
                        "_xmipp_shiftY": "1.515524",
                        "_xmipp_angleTilt": "13.505312",
                        "_xmipp_angleRot": "134.649693",
                        "_xmipp_weight": "0.343879533868",
                        "_xmipp_cost": "0.145799",
                        "_xmipp_weightContinuous2": "0.645422",
                        "_xmipp_costPerc": "0.413043",
                        "_xmipp_corrIdx": "0.134841",
                        "_xmipp_corrMask": "0.001827",
                        "_xmipp_corrWeight": "0.0008695299",
                        "_xmipp_imedValue": "561.926465",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.549887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.625364",
                        "_xmipp_scoreMirror": "0.625364",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "29",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.84671657 -0.52071126 -0.10922839 -0.66540343]\n [ 0.52962365  0.80534956  0.26629097  0.13834497]\n [-0.05069367 -0.28332292  0.95768381 -0.11436026]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259889",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.530791",
                        "_xmipp_angleDiff": "0.47024",
                        "_xmipp_shiftX": "-0.48434",
                        "_xmipp_shiftY": "0.4903",
                        "_xmipp_angleTilt": "16.72763",
                        "_xmipp_angleRot": "112.302672",
                        "_xmipp_weight": "12.9468399174",
                        "_xmipp_cost": "0.141801",
                        "_xmipp_weightContinuous2": "0.627724",
                        "_xmipp_costPerc": "0.347826",
                        "_xmipp_corrIdx": "0.151193",
                        "_xmipp_corrMask": "0.001838",
                        "_xmipp_corrWeight": "0.0008435133",
                        "_xmipp_imedValue": "547.776608",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.006076",
                        "_xmipp_scoreAlignabilityAccuracy": "12.86865",
                        "_xmipp_scoreMirror": "12.86865",
                        "item_id": 29,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_29_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "30",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.92206118 -0.38212011 -0.06154187 -0.81986146]\n [ 0.38204893  0.87311833  0.30282502 -1.90739727]\n [-0.06198219 -0.3027352   0.9510571   0.55427987]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.258417",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.15552",
                        "_xmipp_angleDiff": "0.440062",
                        "_xmipp_shiftX": "-1.519037",
                        "_xmipp_shiftY": "-1.519898",
                        "_xmipp_angleTilt": "17.999892",
                        "_xmipp_angleRot": "101.487541",
                        "_xmipp_weight": "0.786294263663",
                        "_xmipp_cost": "0.148459",
                        "_xmipp_weightContinuous2": "0.721743",
                        "_xmipp_costPerc": "0.5",
                        "_xmipp_corrIdx": "0.140175",
                        "_xmipp_corrMask": "0.001672",
                        "_xmipp_corrWeight": "0.0007699696",
                        "_xmipp_imedValue": "554.814302",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.828649",
                        "_xmipp_scoreAlignabilityAccuracy": "0.948887",
                        "_xmipp_scoreMirror": "0.948887",
                        "item_id": 30,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_30_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "33",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.08096507  0.98712687 -0.13793185 -2.57810388]\n [-0.88909793  0.1340763   0.4376396   1.01068861]\n [ 0.4504992   0.0872014   0.88850796 -0.89804484]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.248721",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.220456",
                        "_xmipp_angleDiff": "0.425628",
                        "_xmipp_shiftX": "-1.511906",
                        "_xmipp_shiftY": "-2.487717",
                        "_xmipp_angleTilt": "27.313648",
                        "_xmipp_angleRot": "107.493404",
                        "_xmipp_weight": "1.294513693305",
                        "_xmipp_cost": "0.128803",
                        "_xmipp_weightContinuous2": "0.570185",
                        "_xmipp_costPerc": "0.173913",
                        "_xmipp_corrIdx": "0.138244",
                        "_xmipp_corrMask": "0.001972",
                        "_xmipp_corrWeight": "0.0006862674",
                        "_xmipp_imedValue": "541.724476",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.944755",
                        "_xmipp_scoreAlignabilityAccuracy": "1.370211",
                        "_xmipp_scoreMirror": "1.370211",
                        "item_id": 33,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397.outputParticles_33_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "A subset of _SetOfParticles_ was created, discarding *446* items (23.4 %) from the input set.Input: SetOfParticles (1903 items, 250 x 250, 0.74 \u212b/px) \nOutput: SetOfParticles (1457 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10397_ProtUserSubSet.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "pwem",
        "pluginVersion": "3.0.6"
    },
    {
        "object.className": "XmippProtReconstructHighRes",
        "object.id": "10450",
        "object.label": "xmipp3 - highres angles&shifts 2",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "doContinue": false,
        "particleRadius": 76,
        "symmetryGroup": "o",
        "saveSpace": true,
        "nextLowPass": true,
        "nextResolutionCriterion": 0.5,
        "nextResolutionOffset": 2.0,
        "nextSpherical": true,
        "nextPositivity": true,
        "nextDropout": 0.0,
        "nextReferenceScript": "",
        "nextRemove": true,
        "splitMethod": 1,
        "multiresolution": true,
        "angularMaxShift": 10.0,
        "angularMinTilt": 0.0,
        "angularMaxTilt": 180.0,
        "alignmentMethod": 1,
        "numberOfIterations": 1,
        "NimgsSGD": 250,
        "alphaSGD": 0.1,
        "restrictReconstructionAngles": false,
        "angularMinTiltReconstruct": 88.0,
        "angularMaxTiltReconstruct": 92.0,
        "maximumTargetResolution": "2",
        "numberOfPerturbations": 1,
        "numberOfReplicates": 1,
        "contShift": true,
        "contMaxShiftVariation": 2.0,
        "contScale": false,
        "contMaxScale": 0.02,
        "contAngles": true,
        "contGrayValues": false,
        "contMaxGrayScale": 0.5,
        "contMaxGrayShift": 3.0,
        "contDefocus": false,
        "contMaxDefocus": 200.0,
        "contPadding": 2,
        "weightSSNR": false,
        "weightContinuous": false,
        "weightJumper": false,
        "weightCC": true,
        "weightCCmin": 0.1,
        "postSymmetryWithinMask": false,
        "postSymmetryWithinMaskType": "i1",
        "postSymmetryHelical": false,
        "postSymmetryHelicalRadius": -1,
        "postSymmetryHelicalDihedral": false,
        "postSymmetryHelicalMinRot": 0.0,
        "postSymmetryHelicalMaxRot": 360.0,
        "postSymmetryHelicalMinZ": 0.0,
        "postSymmetryHelicalMaxZ": 40.0,
        "postScript": "",
        "postSignificantDenoise": true,
        "postFilterBank": true,
        "postLaplacian": true,
        "postDeconvolve": true,
        "postSoftNeg": true,
        "postSoftNegK": 9.0,
        "postDifference": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputVolumes": "9673.outputVolume",
        "inputParticles": "10397.outputParticles",
        "output": [
            {
                "outputName": "10450.outputVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010450_XmippProtReconstructHighRes/extra/Iter001/volumeAvg.mrc",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "['Runs/010450_XmippProtReconstructHighRes/extra/Iter001/volume01.vol', 'Runs/010450_XmippProtReconstructHighRes/extra/Iter001/volume02.vol']",
                        "item_id": 10572,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputVolume_volumeAvg"
                    }
                ]
            },
            {
                "outputName": "10450.outputParticles",
                "outputType": "SetOfParticles",
                "outputSize": 1457,
                "outputItems": [
                    {
                        "_index": "4",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.96159605  0.21942524 -0.16488055 -0.79814471]\n [-0.25598757 -0.93369598  0.2503641   1.26697146]\n [-0.0990121   0.2829565   0.9540085  -0.4704389 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266727",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.0515",
                        "_xmipp_angleDiff": "0.264603",
                        "_xmipp_shiftX": "0.489743",
                        "_xmipp_shiftY": "-1.491213",
                        "_xmipp_angleTilt": "17.444363",
                        "_xmipp_angleRot": "123.367424",
                        "_xmipp_weight": "0.391176",
                        "_xmipp_cost": "0.132097",
                        "_xmipp_weightContinuous2": "0.665174",
                        "_xmipp_costPerc": "0.323529",
                        "_xmipp_corrIdx": "0.118412",
                        "_xmipp_corrMask": "0.012339",
                        "_xmipp_corrWeight": "0.014548",
                        "_xmipp_imedValue": "73.615527",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.01736",
                        "_xmipp_scoreAlignabilityAccuracy": "1.026544",
                        "_xmipp_scoreMirror": "1.026544",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_4_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "6",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.80521805  0.56962508 -0.16477608 -0.91915586]\n [-0.50501719  0.80439883  0.31289     1.13346676]\n [ 0.31077567 -0.16872992  0.93538692 -0.5410652 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.251281",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.152933",
                        "_xmipp_angleDiff": "0.619909",
                        "_xmipp_shiftX": "-1.480691",
                        "_xmipp_shiftY": "0.479479",
                        "_xmipp_angleTilt": "20.709255",
                        "_xmipp_angleRot": "117.772467",
                        "_xmipp_weight": "0.894118",
                        "_xmipp_cost": "0.16071",
                        "_xmipp_weightContinuous2": "0.728457",
                        "_xmipp_costPerc": "0.882353",
                        "_xmipp_corrIdx": "0.152002",
                        "_xmipp_corrMask": "0.014237",
                        "_xmipp_corrWeight": "0.020551",
                        "_xmipp_imedValue": "72.169999",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.797571",
                        "_xmipp_scoreAlignabilityAccuracy": "0.877905",
                        "_xmipp_scoreMirror": "0.877905",
                        "item_id": 6,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_6_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "8",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.93972552  0.16142151  0.30142835  2.43545715]\n [-0.25239517  0.92219567  0.29300483 -0.17263048]\n [-0.23067863 -0.35142318  0.90735281 -0.75332798]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265108",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.299883",
                        "_xmipp_angleDiff": "0.540747",
                        "_xmipp_shiftX": "2.506009",
                        "_xmipp_shiftY": "0.498673",
                        "_xmipp_angleTilt": "24.857945",
                        "_xmipp_angleRot": "44.188135",
                        "_xmipp_weight": "0.814706",
                        "_xmipp_cost": "0.157948",
                        "_xmipp_weightContinuous2": "0.715938",
                        "_xmipp_costPerc": "0.794118",
                        "_xmipp_corrIdx": "0.154992",
                        "_xmipp_corrMask": "0.015858",
                        "_xmipp_corrWeight": "0.019706",
                        "_xmipp_imedValue": "73.282181",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.781825",
                        "_xmipp_scoreAlignabilityAccuracy": "0.748263",
                        "_xmipp_scoreMirror": "0.748263",
                        "item_id": 8,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_8_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "10",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78358642 -0.58295062  0.21485086 -7.90603105]\n [ 0.52556933  0.80638687  0.27114035  3.69542981]\n [-0.33131435 -0.09954287  0.93825477  0.7424822 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.253599",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.171577",
                        "_xmipp_angleDiff": "0.899976",
                        "_xmipp_shiftX": "-4.498849",
                        "_xmipp_shiftY": "7.514863",
                        "_xmipp_angleTilt": "20.239496",
                        "_xmipp_angleRot": "51.606792",
                        "_xmipp_weight": "0.285294",
                        "_xmipp_cost": "0.125432",
                        "_xmipp_weightContinuous2": "0.568551",
                        "_xmipp_costPerc": "0.205882",
                        "_xmipp_corrIdx": "0.108532",
                        "_xmipp_corrMask": "0.014424",
                        "_xmipp_corrWeight": "0.011643",
                        "_xmipp_imedValue": "73.819309",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.909887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.987516",
                        "_xmipp_scoreMirror": "0.987516",
                        "item_id": 10,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_10_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "11",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.24768738 -0.93153921  0.26624361  2.83725513]\n [ 0.90105168 -0.1205023   0.41663542 -8.52615232]\n [-0.35602926  0.34309459  0.86921187  3.21773791]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.265957",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.21538",
                        "_xmipp_angleDiff": "0.336118",
                        "_xmipp_shiftX": "-9.530865",
                        "_xmipp_shiftY": "-0.511605",
                        "_xmipp_angleTilt": "29.632818",
                        "_xmipp_angleRot": "57.420096",
                        "_xmipp_weight": "0.947058",
                        "_xmipp_cost": "0.165503",
                        "_xmipp_weightContinuous2": "0.750182",
                        "_xmipp_costPerc": "0.941176",
                        "_xmipp_corrIdx": "0.14985",
                        "_xmipp_corrMask": "0.018778",
                        "_xmipp_corrWeight": "0.021406",
                        "_xmipp_imedValue": "74.382785",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.540795",
                        "_xmipp_scoreAlignabilityAccuracy": "0.70582",
                        "_xmipp_scoreMirror": "0.70582",
                        "item_id": 11,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_11_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "15",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.93460598  0.27419609 -0.22655719  2.45884593]\n [-0.12588064  0.85072313  0.51031776  0.09693301]\n [ 0.33266458 -0.44842687  0.82960691  0.61185917]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.2544",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.190429",
                        "_xmipp_angleDiff": "0.206422",
                        "_xmipp_shiftX": "2.489394",
                        "_xmipp_shiftY": "0.482295",
                        "_xmipp_angleTilt": "33.941621",
                        "_xmipp_angleRot": "113.93898",
                        "_xmipp_weight": "1.0",
                        "_xmipp_cost": "0.194113",
                        "_xmipp_weightContinuous2": "0.977456",
                        "_xmipp_costPerc": "1.0",
                        "_xmipp_corrIdx": "0.186173",
                        "_xmipp_corrMask": "0.017697",
                        "_xmipp_corrWeight": "0.022186",
                        "_xmipp_imedValue": "76.317715",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.045555",
                        "_xmipp_scoreAlignabilityAccuracy": "0.669263",
                        "_xmipp_scoreMirror": "0.669263",
                        "item_id": 15,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_15_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "17",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.76905856  0.62532595  0.13234946  4.24674653]\n [-0.51992052 -0.73245337  0.4395392  -0.00750901]\n [ 0.37179508  0.26922019  0.88841933 -0.62893061]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.256413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.455966",
                        "_xmipp_angleDiff": "0.477327",
                        "_xmipp_shiftX": "-3.495926",
                        "_xmipp_shiftY": "2.49178",
                        "_xmipp_angleTilt": "27.324712",
                        "_xmipp_angleRot": "73.242449",
                        "_xmipp_weight": "0.788235",
                        "_xmipp_cost": "0.156383",
                        "_xmipp_weightContinuous2": "0.787467",
                        "_xmipp_costPerc": "0.764706",
                        "_xmipp_corrIdx": "0.136823",
                        "_xmipp_corrMask": "0.01769",
                        "_xmipp_corrWeight": "0.020405",
                        "_xmipp_imedValue": "75.994156",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.99278",
                        "_xmipp_scoreAlignabilityAccuracy": "0.780354",
                        "_xmipp_scoreMirror": "0.780354",
                        "item_id": 17,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_17_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "18",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.64103943 -0.74559697  0.18208134  8.91931722]\n [ 0.76307141 -0.59366795  0.25550026 -2.48051344]\n [-0.08240437  0.30272681  0.94950829 -1.04292864]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252614",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.204605",
                        "_xmipp_angleDiff": "0.48875",
                        "_xmipp_shiftX": "-7.524501",
                        "_xmipp_shiftY": "-5.493337",
                        "_xmipp_angleTilt": "18.284882",
                        "_xmipp_angleRot": "54.524565",
                        "_xmipp_weight": "0.470588",
                        "_xmipp_cost": "0.137326",
                        "_xmipp_weightContinuous2": "0.691505",
                        "_xmipp_costPerc": "0.411765",
                        "_xmipp_corrIdx": "0.17607",
                        "_xmipp_corrMask": "0.014706",
                        "_xmipp_corrWeight": "0.018632",
                        "_xmipp_imedValue": "76.087287",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.974354",
                        "_xmipp_scoreAlignabilityAccuracy": "1.375115",
                        "_xmipp_scoreMirror": "1.375115",
                        "item_id": 18,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_18_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "19",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.78415406 -0.61726585 -0.06391619 -0.86513986]\n [ 0.54378122  0.63384685  0.5500365  -1.13559579]\n [-0.29900567 -0.46606978  0.83269116  0.6837141 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.255046",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.070449",
                        "_xmipp_angleDiff": "0.325045",
                        "_xmipp_shiftX": "-1.500353",
                        "_xmipp_shiftY": "-0.504431",
                        "_xmipp_angleTilt": "33.623814",
                        "_xmipp_angleRot": "96.628245",
                        "_xmipp_weight": "0.841176",
                        "_xmipp_cost": "0.158241",
                        "_xmipp_weightContinuous2": "0.717266",
                        "_xmipp_costPerc": "0.823529",
                        "_xmipp_corrIdx": "0.17362",
                        "_xmipp_corrMask": "0.018822",
                        "_xmipp_corrWeight": "0.020925",
                        "_xmipp_imedValue": "79.682418",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.605976",
                        "_xmipp_scoreAlignabilityAccuracy": "2.082134",
                        "_xmipp_scoreMirror": "2.082134",
                        "item_id": 19,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_19_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "24",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.85682707  0.51364938  0.04485189  1.02322516]\n [-0.47675668 -0.82239328  0.31043899  6.66713509]\n [ 0.19634269  0.24460909  0.94953459 -2.22807289]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.252841",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.273521",
                        "_xmipp_angleDiff": "0.354397",
                        "_xmipp_shiftX": "-4.492794",
                        "_xmipp_shiftY": "-5.502435",
                        "_xmipp_angleTilt": "18.280079",
                        "_xmipp_angleRot": "81.778856",
                        "_xmipp_weight": "0.655882",
                        "_xmipp_cost": "0.151655",
                        "_xmipp_weightContinuous2": "0.687413",
                        "_xmipp_costPerc": "0.617647",
                        "_xmipp_corrIdx": "0.177694",
                        "_xmipp_corrMask": "0.010914",
                        "_xmipp_corrWeight": "0.018742",
                        "_xmipp_imedValue": "76.234708",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.811456",
                        "_xmipp_scoreAlignabilityAccuracy": "0.60409",
                        "_xmipp_scoreMirror": "0.60409",
                        "item_id": 24,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_24_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "26",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.31240441  0.94222827  0.12086922  7.82598687]\n [-0.92672258 -0.33025313  0.17921531  9.18112168]\n [ 0.20877917 -0.05602458  0.97635675 -2.65406935]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.266413",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.389837",
                        "_xmipp_angleDiff": "0.159998",
                        "_xmipp_shiftX": "-11.50734",
                        "_xmipp_shiftY": "4.490465",
                        "_xmipp_angleTilt": "12.48391",
                        "_xmipp_angleRot": "56.002865",
                        "_xmipp_weight": "0.708824",
                        "_xmipp_cost": "0.153457",
                        "_xmipp_weightContinuous2": "0.772733",
                        "_xmipp_costPerc": "0.676471",
                        "_xmipp_corrIdx": "0.149731",
                        "_xmipp_corrMask": "0.015575",
                        "_xmipp_corrWeight": "0.019433",
                        "_xmipp_imedValue": "75.765845",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.707941",
                        "_xmipp_scoreAlignabilityAccuracy": "0.580335",
                        "_xmipp_scoreMirror": "0.580335",
                        "item_id": 26,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_26_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "27",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[-0.74656998 -0.64376991 -0.16790938 -4.33236339]\n [ 0.62133133 -0.76488581  0.16999142  1.64618701]\n [-0.23786686  0.02258314  0.9710352  -1.0373281 ]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259009",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.348545",
                        "_xmipp_angleDiff": "0.14126",
                        "_xmipp_shiftX": "4.503986",
                        "_xmipp_shiftY": "1.506474",
                        "_xmipp_angleTilt": "13.823779",
                        "_xmipp_angleRot": "134.646965",
                        "_xmipp_weight": "0.497058",
                        "_xmipp_cost": "0.138786",
                        "_xmipp_weightContinuous2": "0.698857",
                        "_xmipp_costPerc": "0.441176",
                        "_xmipp_corrIdx": "0.135647",
                        "_xmipp_corrMask": "0.013592",
                        "_xmipp_corrWeight": "0.017622",
                        "_xmipp_imedValue": "74.509773",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.549887",
                        "_xmipp_scoreAlignabilityAccuracy": "0.625364",
                        "_xmipp_scoreMirror": "0.625364",
                        "item_id": 27,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_27_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "29",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.84655751 -0.52138902 -0.10720948 -0.66585266]\n [ 0.52990826  0.80642693  0.26243636  0.13971956]\n [-0.05037483 -0.27897866  0.95897512 -0.11267571]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.259889",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "1",
                        "_xmipp_shiftDiff": "0.530791",
                        "_xmipp_angleDiff": "0.47024",
                        "_xmipp_shiftX": "-0.483968",
                        "_xmipp_shiftY": "0.491276",
                        "_xmipp_angleTilt": "16.468624",
                        "_xmipp_angleRot": "112.220805",
                        "_xmipp_weight": "0.523529",
                        "_xmipp_cost": "0.14082",
                        "_xmipp_weightContinuous2": "0.709099",
                        "_xmipp_costPerc": "0.470588",
                        "_xmipp_corrIdx": "0.153175",
                        "_xmipp_corrMask": "0.014207",
                        "_xmipp_corrWeight": "0.018931",
                        "_xmipp_imedValue": "74.985219",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "1.006076",
                        "_xmipp_scoreAlignabilityAccuracy": "12.86865",
                        "_xmipp_scoreMirror": "12.86865",
                        "item_id": 29,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_29_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "30",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.92326385 -0.37921421 -0.06148542 -0.81986817]\n [ 0.37912508  0.87355877  0.30522002 -1.89849612]\n [-0.06203264 -0.30510927  0.95029484  0.55672099]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.258417",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.15552",
                        "_xmipp_angleDiff": "0.440062",
                        "_xmipp_shiftX": "-1.511257",
                        "_xmipp_shiftY": "-1.517403",
                        "_xmipp_angleTilt": "18.140693",
                        "_xmipp_angleRot": "101.389585",
                        "_xmipp_weight": "0.576471",
                        "_xmipp_cost": "0.14831",
                        "_xmipp_weightContinuous2": "0.672251",
                        "_xmipp_costPerc": "0.529412",
                        "_xmipp_corrIdx": "0.147009",
                        "_xmipp_corrMask": "0.013176",
                        "_xmipp_corrWeight": "0.018991",
                        "_xmipp_imedValue": "73.656824",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.828649",
                        "_xmipp_scoreAlignabilityAccuracy": "0.948887",
                        "_xmipp_scoreMirror": "0.948887",
                        "item_id": 30,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_30_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    },
                    {
                        "_index": "33",
                        "_filename": "Runs/008046_XmippProtExtractParticles/extra/190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.mrcs",
                        "_samplingRate": "0.7425",
                        "_ctfModel": "defU=9471.72, defV=8971.15, ast=92.68, psh=0.00, res=None, fit=None",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_transform": "[[ 0.08386044  0.986731   -0.13903004 -2.58223997]\n [-0.88886658  0.13713885  0.43716031  1.00113718]\n [ 0.45042606  0.08691869  0.88857274 -0.89656854]\n [ 0.          0.          0.          1.        ]]",
                        "_coordinate": "Coordinate",
                        "_micId": "26",
                        "_classId": "None",
                        "_xmipp_scoreByVariance": "1.248721",
                        "_xmipp_scoreByGiniCoeff": "0.637616",
                        "_rlnRandomSubset": "2",
                        "_xmipp_shiftDiff": "0.220456",
                        "_xmipp_angleDiff": "0.425628",
                        "_xmipp_shiftX": "-1.510263",
                        "_xmipp_shiftY": "-2.48861",
                        "_xmipp_angleTilt": "27.305558",
                        "_xmipp_angleRot": "107.642218",
                        "_xmipp_weight": "0.311765",
                        "_xmipp_cost": "0.125531",
                        "_xmipp_weightContinuous2": "0.632111",
                        "_xmipp_costPerc": "0.235294",
                        "_xmipp_corrIdx": "0.137847",
                        "_xmipp_corrMask": "0.015631",
                        "_xmipp_corrWeight": "0.017676",
                        "_xmipp_imedValue": "74.272266",
                        "_xmipp_angleTemp": "0.0",
                        "_xmipp_scoreAlignabilityPrecision": "0.944755",
                        "_xmipp_scoreAlignabilityAccuracy": "1.370211",
                        "_xmipp_scoreMirror": "1.370211",
                        "item_id": 33,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450.outputParticles_33_190117_02_00026_UnderDefocus0.9um_frameImage_aligned_mic.jpg"
                    }
                ]
            }
        ],
        "summary": "Symmetry: oNumber of iterations: 1Local alignment, refining: shifts angles Weights: Input: SetOfParticles (1457 items, 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)SetOfParticles (1457 items, 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10450_XmippProtReconstructHighRes.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3",
        "filesPath": "./10450.outputParticles"
    },
    {
        "object.className": "XmippProtCreateMask3D",
        "object.id": "10749",
        "object.label": "xmipp3 - create 3d mask",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "source": 0,
        "volumeOperation": 0,
        "threshold": 0.002,
        "segmentationType": 2,
        "nvoxels": null,
        "naminoacids": null,
        "dalton": null,
        "samplingRate": 1.0,
        "size": null,
        "geo": 0,
        "radius": -1,
        "shiftCenter": false,
        "centerX": 0,
        "centerY": 0,
        "centerZ": 0,
        "boxSize": -1,
        "innerRadius": 0,
        "outerRadius": -1,
        "height": -1,
        "sigma": -1.0,
        "borderDecay": 0,
        "featureFilePath": null,
        "doSmall": true,
        "smallSize": 50,
        "doBig": true,
        "doSymmetrize": true,
        "symmetry": "o",
        "doMorphological": true,
        "morphologicalOperation": 0,
        "elementSize": 2,
        "doInvert": false,
        "doSmooth": false,
        "sigmaConvolution": 2.0,
        "inputVolume": "10450.outputVolume",
        "output": [
            {
                "outputName": "10749.outputMask",
                "outputType": "VolumeMask",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010749_XmippProtCreateMask3D/mask.vol",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 10849,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10749.outputMask_mask"
                    }
                ]
            }
        ],
        "summary": "*Mask creation*   Thresholding 0.002000*Mask processing*   Removing components smaller than 50   Keeping largest component   Symmetrized o   Morphological operation: dilationInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: VolumeMask (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10749_XmippProtCreateMask3D.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtMonoDir",
        "object.id": "10812",
        "object.label": "xmipp3 - directional resolution MonoDir (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "significance": 0.95,
        "resstep": 0.5,
        "fast": false,
        "isPremasked": false,
        "volumeRadius": -1.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolumes": "10450.outputVolume",
        "Mask": "10749.outputMask",
        "output": [
            {
                "outputName": "10812.outputVolume_doa",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010812_XmippProtMonoDir/extra/doaMetric.vol",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11054,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10812.outputVolume_doa_doaMetric"
                    }
                ]
            },
            {
                "outputName": "10812.azimuthalVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010812_XmippProtMonoDir/extra/azimuthal_resolution.vol",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11060,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10812.azimuthalVolume_azimuthal_resolution"
                    }
                ]
            },
            {
                "outputName": "10812.radialVolume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010812_XmippProtMonoDir/extra/radial_resolution.vol",
                        "_samplingRate": "0.7425",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11066,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10812.radialVolume_radial_resolution"
                    }
                ]
            }
        ],
        "summary": "No summary information.Input: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: VolumeMask (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)Volume (250 x 250 x 250, 0.74 \u212b/px)Volume (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10812_XmippProtMonoDir.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtDeepRes",
        "object.id": "10857",
        "object.label": "xmipp3 - local deepRes",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "range": 0,
        "inputVolume": "10450.outputVolume",
        "Mask": "10749.outputMask",
        "output": [
            {
                "outputName": "10857.resolution_Volume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010857_XmippProtDeepRes/extra/deepRes_resolution.vol",
                        "_samplingRate": "1.0",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 10894,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10857.resolution_Volume_deepRes_resolution"
                    }
                ]
            }
        ],
        "summary": "Median resolution 4.43 \u00c5.Highest resolution 2.98 \u00c5,   Lowest resolution 6.90 \u00c5. \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: VolumeMask (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (185 x 185 x 185, 1.00 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10857_XmippProtDeepRes.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "10900",
        "object.label": "xmipp3 - crop/resize volumes resolution",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 0.74,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 250,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "10857.resolution_Volume",
        "output": [
            {
                "outputName": "10900.outputVol",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/010900_XmippProtCropResizeVolumes/extra/output_volume.vol",
                        "_samplingRate": "0.74",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 10942,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10900.outputVol_output_volume"
                    }
                ]
            }
        ],
        "summary": "Output volume(s) have a different sampling rate (pixel size): *0.740* \u212b/pxResizing method: *Sampling Rate*The volume(s) were windowed.New size: *250* pxInput: Volume (185 x 185 x 185, 1.00 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10900_XmippProtCropResizeVolumes.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtLocSharp",
        "object.id": "10948",
        "object.label": "xmipp3 - localdeblur sharpening",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "const": 1.0,
        "K": 0.025,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "10450.outputVolume",
        "resolutionVolume": "10900.outputVol",
        "output": [
            {
                "outputName": "10948.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 3,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/010948_XmippProtLocSharp/extra/sharpenedMap_1.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10948.outputVolumes_sharpenedMap_1"
                    },
                    {
                        "_index": "1",
                        "_filename": "Runs/010948_XmippProtLocSharp/extra/sharpenedMap_2.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10948.outputVolumes_sharpenedMap_2"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/010948_XmippProtLocSharp/extra/sharpenedMap_3.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10948.outputVolumes_sharpenedMap_3"
                    }
                ]
            }
        ],
        "summary": "LocalDeblur MapInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: SetOfVolumes (3 items, 250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/10948_XmippProtLocSharp.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtDeepVolPostProc",
        "object.id": "11000",
        "object.label": "xmipp3 - deepEMhancer",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "useHalfMapsInsteadVol": false,
        "halfMapsAttached": true,
        "normalization": 0,
        "noiseMean": null,
        "noiseStd": null,
        "modelType": 0,
        "performCleaningStep": false,
        "sizeFraction_CC": 0.05,
        "batch_size": 8,
        "inputVolume": "10450.outputVolume",
        "output": [
            {
                "outputName": "11000.Volume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/011000_XmippProtDeepVolPostProc/extra/deepPostProcess.mrc",
                        "_samplingRate": "0.7425",
                        "_origin": "[[  1.       0.       0.     -92.8125]\n [  0.       1.       0.     -92.8125]\n [  0.       0.       1.     -92.8125]\n [  0.       0.       0.       1.    ]]",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11046,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11000.Volume_deepPostProcess"
                    }
                ]
            }
        ],
        "summary": "Input: raw data mapNormalization: autoInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11000_XmippProtDeepVolPostProc.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtDeepRes",
        "object.id": "11072",
        "object.label": "xmipp3 - local deepRes Enhanced",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "range": 0,
        "Mask": "10749.outputMask",
        "inputVolume": "11000.Volume",
        "output": [
            {
                "outputName": "11072.resolution_Volume",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/011072_XmippProtDeepRes/extra/deepRes_resolution.vol",
                        "_samplingRate": "1.0",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11109,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11072.resolution_Volume_deepRes_resolution"
                    }
                ]
            }
        ],
        "summary": "Median resolution 2.99 \u00c5.Highest resolution 2.50 \u00c5,   Lowest resolution 6.89 \u00c5. \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: VolumeMask (250 x 250 x 250, 0.74 \u212b/px) \nOutput: Volume (185 x 185 x 185, 1.00 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11072_XmippProtDeepRes.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "11115",
        "object.label": "xmipp3 - crop/resize volumes resolution enhanced",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 0.74,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 250,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "11072.resolution_Volume",
        "output": [
            {
                "outputName": "11115.outputVol",
                "outputType": "Volume",
                "outputItems": [
                    {
                        "_index": "1",
                        "_filename": "Runs/011115_XmippProtCropResizeVolumes/extra/output_volume.vol",
                        "_samplingRate": "0.74",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 11157,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11115.outputVol_output_volume"
                    }
                ]
            }
        ],
        "summary": "Output volume(s) have a different sampling rate (pixel size): *0.740* \u212b/pxResizing method: *Sampling Rate*The volume(s) were windowed.New size: *250* pxInput: Volume (185 x 185 x 185, 1.00 \u212b/px) \nOutput: Volume (250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11115_XmippProtCropResizeVolumes.log",
        "label": [
            "Validation"
        ],
        "labelColor": [
            "#9575cd"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "XmippProtLocSharp",
        "object.id": "11163",
        "object.label": "xmipp3 - localdeblur sharpening enhanced",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "const": 1.0,
        "K": 0.025,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "11000.Volume",
        "resolutionVolume": "11115.outputVol",
        "output": [
            {
                "outputName": "11163.outputVolumes",
                "outputType": "SetOfVolumes",
                "outputSize": 4,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/011163_XmippProtLocSharp/extra/sharpenedMap_1.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 1,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11163.outputVolumes_sharpenedMap_1"
                    },
                    {
                        "_index": "1",
                        "_filename": "Runs/011163_XmippProtLocSharp/extra/sharpenedMap_2.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 2,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11163.outputVolumes_sharpenedMap_2"
                    },
                    {
                        "_index": "2",
                        "_filename": "Runs/011163_XmippProtLocSharp/extra/sharpenedMap_3.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 3,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11163.outputVolumes_sharpenedMap_3"
                    },
                    {
                        "_index": "3",
                        "_filename": "Runs/011163_XmippProtLocSharp/extra/sharpenedMap_4.mrc",
                        "_samplingRate": "0.7425",
                        "_acquisition": "\n    mag=None\n    volt= None\n    Cs=None\n    Q0=None\n\n",
                        "_classId": "None",
                        "_halfMapFilenames": "[]",
                        "item_id": 4,
                        "item_representation": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11163.outputVolumes_sharpenedMap_4"
                    }
                ]
            }
        ],
        "summary": "LocalDeblur MapInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nInput: Volume (250 x 250 x 250, 0.74 \u212b/px) \nOutput: SetOfVolumes (4 items, 250 x 250 x 250, 0.74 \u212b/px)",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/11163_XmippProtLocSharp.log",
        "label": [
            "3D Refinement"
        ],
        "labelColor": [
            "#ff8a65"
        ],
        "plugin": "xmipp3"
    },
    {
        "object.className": "EmpiarDepositor",
        "object.id": "13782",
        "object.label": "empiar - Empiar deposition",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "deposit": false,
        "resume": false,
        "submit": false,
        "jsonTemplate": null,
        "entryTopLevel": "results",
        "entryTitle": "testEntryTitle",
        "entryAuthor": "Sanchez, I.",
        "experimentType": 2,
        "releaseDate": 0,
        "citations": null,
        "inputSets": [
            "6299.outputMovies",
            "10450.outputParticles"
        ],
        "piFirstName": "Irene",
        "piLastName": "Sanchez",
        "piOrg": "CSIC - CNB",
        "piEmail": "isanchez@cnb.csic.es",
        "piPost": "28001",
        "piTown": "Madrid",
        "piCountry": "ES",
        "caFirstName": "Irene",
        "caLastName": "Sanchez",
        "caOrg": "CSIC - CNB",
        "caEmail": "isanchez@cnb.csic.es",
        "caPost": "28001",
        "caTown": "Madrid",
        "caCountry": "ES",
        "ownershipBasedOn": 0,
        "newOwnerId": null,
        "EMDBrefs": null,
        "output": [],
        "summary": "No deposition files generated yetInput: SetOfMovies (30 items, 3710 x 3838 x 50 [1-50], 0.49 \u212b/px) \nInput: SetOfParticles (1457 items, 250 x 250, 0.74 \u212b/px) \n",
        "log": "Runs/013782_EmpiarDepositor/extra/results/images_representation/13782_EmpiarDepositor.log",
        "plugin": "empiar"
    }
]